<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.Olfactometer;assembly=Harp.Olfactometer"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.WhiteRabbit;assembly=AllenNeuralDynamics.WhiteRabbit"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p3="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Define Device</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="Olfactometer1" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Olfactometer1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                    <rx:Name>Olfactometer1Commands</rx:Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PortName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Device">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Disabled</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COM18</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Olfactometer1Events</Name>
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel0ActualFlow" />
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel1ActualFlow" />
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel2ActualFlow" />
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel3ActualFlow" />
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel4ActualFlow" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="3" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="Olfactometer2" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Olfactometer2</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                    <rx:Name>Olfactometer2Commands</rx:Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PortName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Device">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Disabled</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COM4</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Olfactometer2Events</Name>
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel0ActualFlow" />
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel1ActualFlow" />
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel2ActualFlow" />
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel3ActualFlow" />
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel4ActualFlow" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="3" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="Olfactometer3" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Olfactometer3</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                    <rx:Name>Olfactometer3Commands</rx:Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PortName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Device">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Disabled</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COM3</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Olfactometer3Events</Name>
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel0ActualFlow" />
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel1ActualFlow" />
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel2ActualFlow" />
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel3ActualFlow" />
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel4ActualFlow" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="3" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="WhiteRabbit" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>white_rabbit</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                    <rx:Name>HarpWhiteRabbitCommands</rx:Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PortName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:Device">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Enabled</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COM9</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>HarpWhiteRabbitEvents</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="vaccum port" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:CreateSerialPort">
                <port:Name>due</port:Name>
                <port:PortName>COM5</port:PortName>
                <port:BaudRate>115200</port:BaudRate>
                <port:NewLine>\r</port:NewLine>
                <port:Parity>None</port:Parity>
                <port:ParityReplace>63</port:ParityReplace>
                <port:DataBits>8</port:DataBits>
                <port:StopBits>One</port:StopBits>
                <port:Handshake>None</port:Handshake>
                <port:DiscardNull>false</port:DiscardNull>
                <port:DtrEnable>false</port:DtrEnable>
                <port:RtsEnable>false</port:RtsEnable>
                <port:ReadBufferSize>4096</port:ReadBufferSize>
                <port:WriteBufferSize>2048</port:WriteBufferSize>
                <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialize Device</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="StartFlow" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>RButton B Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateEnableFlowPayload">
                <p1:EnableFlow>Enabled</p1:EnableFlow>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="DisableFlow" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton MButton XButton1 A D E Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateEnableFlowPayload">
                <p1:EnableFlow>Disabled</p1:EnableFlow>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Channel4" DisplayName="main_flow" />
              <Property Name="Channel0" DisplayName="D1C0Flow" />
              <Property Name="Channel1" DisplayName="D1C1Flow" />
              <Property Name="Channel2" DisplayName="D1C2Flow" />
              <Property Name="Channel3" DisplayName="D1C3Flow" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateChannelsTargetFlowPayload">
                <p1:Channel0>75</p1:Channel0>
                <p1:Channel1>75</p1:Channel1>
                <p1:Channel2>75</p1:Channel2>
                <p1:Channel3>75</p1:Channel3>
                <p1:Channel4>925</p1:Channel4>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateDI0TriggerPayload">
                <p1:DI0Trigger>Sync</p1:DI0Trigger>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Olfactometer1Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Olfactometer1Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>RButton B Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateEnableFlowPayload">
                <p1:EnableFlow>Enabled</p1:EnableFlow>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton MButton XButton1 A D E Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateEnableFlowPayload">
                <p1:EnableFlow>Disabled</p1:EnableFlow>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Channel4" DisplayName="contorl_flow" />
              <Property Name="Channel0" DisplayName="D2C0Flow" />
              <Property Name="Channel1" DisplayName="D2C1Flow" />
              <Property Name="Channel2" DisplayName="D2C2Flow" />
              <Property Name="Channel3" DisplayName="D2C3Flow" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateChannelsTargetFlowPayload">
                <p1:Channel0>75</p1:Channel0>
                <p1:Channel1>75</p1:Channel1>
                <p1:Channel2>75</p1:Channel2>
                <p1:Channel3>75</p1:Channel3>
                <p1:Channel4>958</p1:Channel4>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateDI0TriggerPayload">
                <p1:DI0Trigger>Sync</p1:DI0Trigger>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Olfactometer2Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Olfactometer2Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>RButton B Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateEnableFlowPayload">
                <p1:EnableFlow>Enabled</p1:EnableFlow>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton MButton XButton1 A D E Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateEnableFlowPayload">
                <p1:EnableFlow>Disabled</p1:EnableFlow>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Channel4" DisplayName="fulsh_flow" />
              <Property Name="Channel0" DisplayName="D3C0Flow" />
              <Property Name="Channel1" DisplayName="D3C1Flow" />
              <Property Name="Channel2" DisplayName="D3C2Flow" />
              <Property Name="Channel3" DisplayName="D3C3Flow" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateChannelsTargetFlowPayload">
                <p1:Channel0>75</p1:Channel0>
                <p1:Channel1>0</p1:Channel1>
                <p1:Channel2>0</p1:Channel2>
                <p1:Channel3>0</p1:Channel3>
                <p1:Channel4>986</p1:Channel4>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateDI0TriggerPayload">
                <p1:DI0Trigger>Sync</p1:DI0Trigger>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Olfactometer3Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Olfactometer3Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="StartPPS" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton RButton Cancel MButton XButton1 XButton2 ShiftKey ControlKey Menu Pause Capital CapsLock KanaMode HanguelMode HangulMode JunjaMode A B C D E F G P Q R S T U V W Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateAuxPortModePayload">
                <p2:AuxPortMode>PPS</p2:AuxPortMode>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpWhiteRabbitCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="EndPPS" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton RButton Cancel MButton XButton1 XButton2 ShiftKey ControlKey Menu Pause Capital CapsLock KanaMode HanguelMode HangulMode JunjaMode A B C D E F G P Q R S T U V W Control Alt</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateAuxPortModePayload">
                <p2:AuxPortMode>Disabled</p2:AuxPortMode>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpWhiteRabbitCommands</Name>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateAuxPortModePayload">
                <p2:AuxPortMode>PPS</p2:AuxPortMode>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpWhiteRabbitCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>V</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Vacuum (ml/min)" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>4500</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWriteLine">
                <port:PortName>due</port:PortName>
                <port:NewLine>\r\n</port:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT2S</rx:DueTime>
                <rx:Period xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialReadLine">
                <port:PortName>due</port:PortName>
                <port:NewLine>\r\n</port:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>VacuumStatus</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>VacuumRequested</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>VacuumSent</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>!{0}</Format>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="13" Label="Source1" />
            <Edge From="0" To="24" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="15" Label="Source1" />
            <Edge From="3" To="26" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source3" />
            <Edge From="8" To="9" Label="Source4" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="20" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="20" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="20" Label="Source3" />
            <Edge From="19" To="20" Label="Source4" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="23" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="31" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="31" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="31" Label="Source3" />
            <Edge From="30" To="31" Label="Source4" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="34" Label="Source1" />
            <Edge From="33" To="34" Label="Source2" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="45" To="47" Label="Source1" />
            <Edge From="46" To="47" Label="Source2" />
            <Edge From="47" To="54" Label="Source1" />
            <Edge From="54" To="50" Label="Source1" />
            <Edge From="49" To="50" Label="Source2" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="56" Label="Source1" />
            <Edge From="56" To="48" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="48" To="55" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Odor loop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Count" />
              <Property Name="Start" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Range">
                <rx:Start>1</rx:Start>
                <rx:Count>90</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="charge time" />
              <Property Name="Expression" />
              <Property Name="EndV0Delay" />
              <Property Name="FlowADJt" />
              <Property Name="flush_time" />
              <Property Name="recharge_t" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>9 odor BLOCK</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="charge time" />
                    <Property Name="Expression" />
                    <Property Name="EndV0Delay" />
                    <Property Name="FlowADJt" />
                    <Property Name="flush_time" />
                    <Property Name="recharge_t" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>LOOP</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Expression" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>9odor_block</scr:Name>
                          <scr:Expression>it == 1  ? "1,0,3,0,0,7,600,600" :
"0,0,0,0,0,0,900,900"</scr:Expression>
                        </Expression>
                        <Expression xsi:type="Parse">
                          <Pattern>%i,%i,%i,%i,%i,%i,%i,%i</Pattern>
                          <Separator />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="charge time" />
                          <Property Name="EndV0Delay" />
                          <Property Name="FlowADJt" />
                          <Property Name="flush_time" />
                          <Property Name="recharge_t" />
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>stim_main_all64mix</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="charge time" />
                                <Property Name="EndV0Delay" />
                                <Property Name="FlowADJt" />
                                <Property Name="flush_time" />
                                <Property Name="recharge_t" />
                              </Expression>
                              <Expression xsi:type="rx:SelectMany">
                                <Name>StimBlockOdor</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="DueTime" DisplayName="FlowADJt" />
                                    </Expression>
                                    <Expression xsi:type="rx:SelectMany">
                                      <Name>Adjust flow rate</Name>
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Rest.Item1</Selector>
                                          </Expression>
                                          <Expression xsi:type="p1:Format">
                                            <harp:MessageType>Write</harp:MessageType>
                                            <harp:Register xsi:type="p1:Channel4TargetFlow" />
                                          </Expression>
                                          <Expression xsi:type="MulticastSubject">
                                            <Name>Olfactometer2Commands</Name>
                                          </Expression>
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Item7</Selector>
                                          </Expression>
                                          <Expression xsi:type="p1:Format">
                                            <harp:MessageType>Write</harp:MessageType>
                                            <harp:Register xsi:type="p1:Channel4TargetFlow" />
                                          </Expression>
                                          <Expression xsi:type="MulticastSubject">
                                            <Name>Olfactometer1Commands</Name>
                                          </Expression>
                                          <Expression xsi:type="Combinator">
                                            <Combinator xsi:type="rx:Merge" />
                                          </Expression>
                                          <Expression xsi:type="ExternalizedMapping">
                                            <Property Name="DueTime" />
                                          </Expression>
                                          <Expression xsi:type="Combinator">
                                            <Combinator xsi:type="rx:Delay">
                                              <rx:DueTime>PT1S</rx:DueTime>
                                            </Combinator>
                                          </Expression>
                                          <Expression xsi:type="Combinator">
                                            <Combinator xsi:type="rx:Sample" />
                                          </Expression>
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="1" Label="Source1" />
                                          <Edge From="0" To="4" Label="Source1" />
                                          <Edge From="0" To="10" Label="Source1" />
                                          <Edge From="1" To="2" Label="Source1" />
                                          <Edge From="2" To="3" Label="Source1" />
                                          <Edge From="3" To="7" Label="Source1" />
                                          <Edge From="4" To="5" Label="Source1" />
                                          <Edge From="5" To="6" Label="Source1" />
                                          <Edge From="6" To="7" Label="Source2" />
                                          <Edge From="7" To="9" Label="Source1" />
                                          <Edge From="8" To="9" Label="Source2" />
                                          <Edge From="9" To="10" Label="Source2" />
                                          <Edge From="10" To="11" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="rx:SelectMany">
                                      <Name>Odor_set6</Name>
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Item1</Selector>
                                          </Expression>
                                          <Expression xsi:type="IncludeWorkflow" Path="Extensions\open_OC.bonsai" />
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Item2</Selector>
                                          </Expression>
                                          <Expression xsi:type="IncludeWorkflow" Path="Extensions\open_OC.bonsai" />
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Item3</Selector>
                                          </Expression>
                                          <Expression xsi:type="IncludeWorkflow" Path="Extensions\open_OC.bonsai" />
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Item4</Selector>
                                          </Expression>
                                          <Expression xsi:type="IncludeWorkflow" Path="Extensions\open_OC.bonsai" />
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Item5</Selector>
                                          </Expression>
                                          <Expression xsi:type="IncludeWorkflow" Path="Extensions\open_OC.bonsai" />
                                          <Expression xsi:type="MemberSelector">
                                            <Selector>Item6</Selector>
                                          </Expression>
                                          <Expression xsi:type="IncludeWorkflow" Path="Extensions\open_OC.bonsai" />
                                          <Expression xsi:type="Combinator">
                                            <Combinator xsi:type="rx:Merge" />
                                          </Expression>
                                          <Expression xsi:type="Combinator">
                                            <Combinator xsi:type="rx:Sample" />
                                          </Expression>
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="1" Label="Source1" />
                                          <Edge From="0" To="3" Label="Source1" />
                                          <Edge From="0" To="5" Label="Source1" />
                                          <Edge From="0" To="7" Label="Source1" />
                                          <Edge From="0" To="9" Label="Source1" />
                                          <Edge From="0" To="11" Label="Source1" />
                                          <Edge From="0" To="14" Label="Source1" />
                                          <Edge From="1" To="2" Label="Source1" />
                                          <Edge From="2" To="13" Label="Source1" />
                                          <Edge From="3" To="4" Label="Source1" />
                                          <Edge From="4" To="13" Label="Source2" />
                                          <Edge From="5" To="6" Label="Source1" />
                                          <Edge From="6" To="13" Label="Source3" />
                                          <Edge From="7" To="8" Label="Source1" />
                                          <Edge From="8" To="13" Label="Source4" />
                                          <Edge From="9" To="10" Label="Source1" />
                                          <Edge From="10" To="13" Label="Source5" />
                                          <Edge From="11" To="12" Label="Source1" />
                                          <Edge From="12" To="13" Label="Source6" />
                                          <Edge From="13" To="14" Label="Source2" />
                                          <Edge From="14" To="15" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Delay">
                                        <rx:DueTime>PT1S</rx:DueTime>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="charge time" />
                                    </Expression>
                                    <Expression xsi:type="rx:SelectMany">
                                      <Name>digital1_high</Name>
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="p1:CreateMessage">
                                            <harp:MessageType>Write</harp:MessageType>
                                            <harp:Payload xsi:type="p1:CreateDigitalOutputSetPayload">
                                              <p1:DigitalOutputSet>DO1</p1:DigitalOutputSet>
                                            </harp:Payload>
                                          </Expression>
                                          <Expression xsi:type="ExternalizedMapping">
                                            <Property Name="Name" />
                                          </Expression>
                                          <Expression xsi:type="MulticastSubject">
                                            <Name>Olfactometer1Commands</Name>
                                          </Expression>
                                          <Expression xsi:type="ExternalizedMapping">
                                            <Property Name="DueTime" DisplayName="charge time" />
                                          </Expression>
                                          <Expression xsi:type="Combinator">
                                            <Combinator xsi:type="rx:Delay">
                                              <rx:DueTime>PT35S</rx:DueTime>
                                            </Combinator>
                                          </Expression>
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="1" Label="Source1" />
                                          <Edge From="1" To="3" Label="Source1" />
                                          <Edge From="2" To="3" Label="Source2" />
                                          <Edge From="3" To="5" Label="Source1" />
                                          <Edge From="4" To="5" Label="Source2" />
                                          <Edge From="5" To="6" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="flush_time" />
                                    </Expression>
                                    <Expression xsi:type="IncludeWorkflow" Path="Extensions\not_flush_odor.bonsai">
                                      <flush_time>PT0.1S</flush_time>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="DueTime" DisplayName="recharge_t" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Delay">
                                        <rx:DueTime>PT1S</rx:DueTime>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="rx:SelectMany">
                                      <Name>digital1_low</Name>
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="p1:CreateMessage">
                                            <harp:MessageType>Write</harp:MessageType>
                                            <harp:Payload xsi:type="p1:CreateDigitalOutputClearPayload">
                                              <p1:DigitalOutputClear>DO1</p1:DigitalOutputClear>
                                            </harp:Payload>
                                          </Expression>
                                          <Expression xsi:type="ExternalizedMapping">
                                            <Property Name="Name" />
                                          </Expression>
                                          <Expression xsi:type="MulticastSubject">
                                            <Name>Olfactometer1Commands</Name>
                                          </Expression>
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="1" Label="Source1" />
                                          <Edge From="1" To="3" Label="Source1" />
                                          <Edge From="2" To="3" Label="Source2" />
                                          <Edge From="3" To="4" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="rx:SelectMany">
                                      <Name>digital0_high</Name>
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="p1:CreateMessage">
                                            <harp:MessageType>Write</harp:MessageType>
                                            <harp:Payload xsi:type="p1:CreateDigitalOutputSetPayload">
                                              <p1:DigitalOutputSet>DO0</p1:DigitalOutputSet>
                                            </harp:Payload>
                                          </Expression>
                                          <Expression xsi:type="ExternalizedMapping">
                                            <Property Name="Name" />
                                          </Expression>
                                          <Expression xsi:type="MulticastSubject">
                                            <Name>Olfactometer1Commands</Name>
                                          </Expression>
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="1" Label="Source1" />
                                          <Edge From="1" To="3" Label="Source1" />
                                          <Edge From="2" To="3" Label="Source2" />
                                          <Edge From="3" To="4" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="EndV0Delay" />
                                    </Expression>
                                    <Expression xsi:type="IncludeWorkflow" Path="Extensions\Odor Stim_end0.bonsai">
                                      <EndV0Delay>PT4S</EndV0Delay>
                                    </Expression>
                                    <Expression xsi:type="rx:SelectMany">
                                      <Name>digital0_low</Name>
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="p1:CreateMessage">
                                            <harp:MessageType>Write</harp:MessageType>
                                            <harp:Payload xsi:type="p1:CreateDigitalOutputClearPayload">
                                              <p1:DigitalOutputClear>DO0</p1:DigitalOutputClear>
                                            </harp:Payload>
                                          </Expression>
                                          <Expression xsi:type="ExternalizedMapping">
                                            <Property Name="Name" />
                                          </Expression>
                                          <Expression xsi:type="MulticastSubject">
                                            <Name>Olfactometer1Commands</Name>
                                          </Expression>
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="1" Label="Source1" />
                                          <Edge From="1" To="3" Label="Source1" />
                                          <Edge From="2" To="3" Label="Source2" />
                                          <Edge From="3" To="4" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="IncludeWorkflow" Path="Extensions\odor&amp;check_off3.bonsai" />
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="2" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source2" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="6" Label="Source1" />
                                    <Edge From="5" To="6" Label="Source2" />
                                    <Edge From="6" To="8" Label="Source1" />
                                    <Edge From="7" To="8" Label="Source2" />
                                    <Edge From="8" To="10" Label="Source1" />
                                    <Edge From="9" To="10" Label="Source2" />
                                    <Edge From="10" To="11" Label="Source1" />
                                    <Edge From="11" To="12" Label="Source1" />
                                    <Edge From="12" To="14" Label="Source1" />
                                    <Edge From="13" To="14" Label="Source2" />
                                    <Edge From="14" To="15" Label="Source1" />
                                    <Edge From="15" To="16" Label="Source1" />
                                    <Edge From="16" To="17" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="5" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>ITI</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>randITI</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:Sample" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="5" Label="Source2" />
                  <Edge From="4" To="5" Label="Source3" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="Start_experiment" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Space Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Address" DisplayName="webhook" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:SendMessageCard">
                <aeon:Address />
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="time_before_odor" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:SendMessageCard">
                <aeon:Address />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeLast">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:SendMessageCard">
                <aeon:Address />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:AsyncSubject">
                <Name>rand1to25</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Lower" DisplayName="ISI_low (s)" />
              <Property Name="Upper" DisplayName="ISI_high (s)" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:CreateContinuousUniform">
                <p3:Lower>15</p3:Lower>
                <p3:Upper>25</p3:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>randITI</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="12" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="7" To="11" Label="Source2" />
            <Edge From="7" To="14" Label="Source2" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="15" To="19" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Path" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="io:GetDirectories,sys:String">
              <MemberName>Path</MemberName>
              <Value>90test</Value>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>DataRoot</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Olfactometer1Events</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DataRoot</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/device1_out</Format>
              <Selector />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:DeviceDataWriter">
                <p1:Path>C:\Users\REC\Downloads\device1_test_dout</p1:Path>
                <p1:Buffered>true</p1:Buffered>
                <p1:Overwrite>false</p1:Overwrite>
                <p1:FilterType>Include</p1:FilterType>
                <p1:MessageType xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Olfactometer2Events</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DataRoot</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/device2_out</Format>
              <Selector />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:DeviceDataWriter">
                <p1:Path>C:\Users\REC\Downloads\device2_test_dout</p1:Path>
                <p1:Buffered>true</p1:Buffered>
                <p1:Overwrite>false</p1:Overwrite>
                <p1:FilterType>Include</p1:FilterType>
                <p1:MessageType xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Olfactometer3Events</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DataRoot</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/device3_out</Format>
              <Selector />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:DeviceDataWriter">
                <p1:Path>C:\Users\REC\Downloads\device3_test_dout</p1:Path>
                <p1:Buffered>true</p1:Buffered>
                <p1:Overwrite>false</p1:Overwrite>
                <p1:FilterType>Include</p1:FilterType>
                <p1:MessageType xsi:nil="true" />
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="8" To="12" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="13" To="17" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Logging</Name>
      </Expression>
      <Expression xsi:type="BitwiseNot" />
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Logging</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Logging</Name>
      </Expression>
      <Expression xsi:type="gui:ButtonBuilder">
        <gui:Name>StopButton</gui:Name>
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Text>Stop</gui:Text>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Stop</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Enabled" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Logging</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BitwiseNot" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Enabled" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="gui:ButtonBuilder">
        <gui:Name>LoggingButton</gui:Name>
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Text>Logging</gui:Text>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>StartLogging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Logging</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:TableLayoutPanelBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:ColumnCount>1</gui:ColumnCount>
        <gui:RowCount>2</gui:RowCount>
        <gui:ColumnStyles />
        <gui:RowStyles />
        <gui:CellSpans />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Stop</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Shutdown</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PPS off</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="p2:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p2:CreateAuxPortModePayload">
                      <p2:AuxPortMode>Disabled</p2:AuxPortMode>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpWhiteRabbitCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>StopLogging</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Logging</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>disable flow</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateEnableFlowPayload">
                      <p1:EnableFlow>Disabled</p1:EnableFlow>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer1Commands</Name>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateEnableFlowPayload">
                      <p1:EnableFlow>Disabled</p1:EnableFlow>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer2Commands</Name>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateEnableFlowPayload">
                      <p1:EnableFlow>Disabled</p1:EnableFlow>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer3Commands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>digital_clear</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateDigitalOutputClearPayload">
                      <p1:DigitalOutputClear>DO1</p1:DigitalOutputClear>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer1Commands</Name>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateDigitalOutputClearPayload">
                      <p1:DigitalOutputClear>DO0</p1:DigitalOutputClear>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer1Commands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="3" To="7" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="10" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="26" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="23" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
