<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Harp.Olfactometer;assembly=Harp.Olfactometer"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>OpenEndValve0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateValveSetPayload">
                <p1:ValveSet>EndValve0</p1:ValveSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Olfactometer1Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DueTime" DisplayName="EndV0Delay" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT4S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>OpenEndValve1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateValveSetPayload">
                <p1:ValveSet>EndValve1</p1:ValveSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Olfactometer1Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>CloseEndValve0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateValveClearPayload">
                <p1:ValveClear>EndValve0</p1:ValveClear>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Olfactometer1Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>