<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p1="clr-namespace:Harp.Olfactometer;assembly=Harp.Olfactometer"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Expression>it &gt; 10 &amp;&amp; it &lt;20</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>int32(Math.Pow(2, (it % 10) - 1))



</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>OC_block1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="LeftShift">
                    <Value>8</Value>
                  </Expression>
                  <Expression xsi:type="p1:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="p1:ValveSet" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer1Commands</Name>
                  </Expression>
                  <Expression xsi:type="p1:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="p1:ValveSet" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer1Commands</Name>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateEnableFlowPayload">
                      <p1:EnableFlow>Disabled</p1:EnableFlow>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer2Commands</Name>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateEnableFlowPayload">
                      <p1:EnableFlow>Enabled</p1:EnableFlow>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer1Commands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Sample" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="0" To="9" Label="Source1" />
                  <Edge From="0" To="12" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="3" To="6" Label="Source2" />
                  <Edge From="4" To="11" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="11" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="11" Label="Source3" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source4" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Expression>it &gt; 20 &amp;&amp; it &lt;30</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>int32(Math.Pow(2, (it % 10) - 1))



</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>OC_block2</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="LeftShift">
                    <Value>8</Value>
                  </Expression>
                  <Expression xsi:type="p1:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="p1:ValveSet" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer2Commands</Name>
                  </Expression>
                  <Expression xsi:type="p1:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="p1:ValveSet" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer2Commands</Name>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateEnableFlowPayload">
                      <p1:EnableFlow>Disabled</p1:EnableFlow>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer1Commands</Name>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateEnableFlowPayload">
                      <p1:EnableFlow>Enabled</p1:EnableFlow>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer2Commands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Sample" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="0" To="9" Label="Source1" />
                  <Edge From="0" To="12" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="3" To="6" Label="Source2" />
                  <Edge From="4" To="11" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="11" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="11" Label="Source3" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source4" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Expression> it &gt;30</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>int32(Math.Pow(2, (it % 10) - 1))



</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>OC_block3</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="LeftShift">
                    <Value>8</Value>
                  </Expression>
                  <Expression xsi:type="p1:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="p1:ValveSet" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer3Commands</Name>
                  </Expression>
                  <Expression xsi:type="p1:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="p1:ValveSet" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer3Commands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Sample" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="0" To="8" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="3" To="6" Label="Source2" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="10" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>