<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Harp.Olfactometer;assembly=Harp.Olfactometer"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateOdorValveStatePayload">
          <p1:OdorValveState>None</p1:OdorValveState>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateCheckValveStatePayload">
          <p1:CheckValveState>None</p1:CheckValveState>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateEnableFlowPayload">
          <p1:EnableFlow>Enabled</p1:EnableFlow>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Olfactometer1Commands</Name>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Olfactometer2Commands</Name>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Olfactometer3Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="4" Label="Source2" />
      <Edge From="3" To="4" Label="Source3" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="8" Label="Source2" />
      <Edge From="7" To="8" Label="Source3" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>