<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Harp.Olfactometer;assembly=Harp.Olfactometer"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>OpenOdorValve</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="p1:Format">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Register xsi:type="p1:ValveSet" />
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>Olfactometer2Commands</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Sample" />
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="0" To="3" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source2" />
                    <Edge From="3" To="4" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>OpenCheckValve</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="LeftShift">
                      <Value>8</Value>
                    </Expression>
                    <Expression xsi:type="p1:Format">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Register xsi:type="p1:ValveSet" />
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>Olfactometer2Commands</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Sample" />
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="0" To="4" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source2" />
                    <Edge From="4" To="5" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>int32(Math.Pow(2,it-1))</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Expression>it &gt; 0 &amp;&amp; it &lt;= 8</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>OC_block1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="LeftShift">
                    <Value>8</Value>
                  </Expression>
                  <Expression xsi:type="p1:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="p1:ValveSet" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer1Commands</Name>
                  </Expression>
                  <Expression xsi:type="p1:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="p1:ValveSet" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer1Commands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Sample" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="0" To="8" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="3" To="6" Label="Source2" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Expression>it &gt; 8</scr:Expression>
            </Expression>
            <Expression xsi:type="RightShift">
              <Value>4</Value>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>OC_block2</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="LeftShift">
                    <Value>8</Value>
                  </Expression>
                  <Expression xsi:type="p1:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="p1:ValveSet" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer2Commands</Name>
                  </Expression>
                  <Expression xsi:type="p1:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="p1:ValveSet" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Olfactometer2Commands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Sample" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="0" To="8" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="3" To="6" Label="Source2" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Expression>it == 0</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="3" To="9" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="10" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="10" Label="Source2" />
            <Edge From="9" To="10" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>