WorkflowBuilder(Version=2.9.0)
GroupWorkflow Olfactometer
    GroupWorkflow Olfactometer1
        BehaviorSubject<Bonsai.Harp.HarpMessage> Olfactometer1Commands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.Olfactometer.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
        -> PublishSubject Olfactometer1Events => #3
        -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel0ActualFlow)
        #3 -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel1ActualFlow)
        #3 -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel2ActualFlow)
        #3 -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel3ActualFlow)
        #3 -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel4ActualFlow)

    GroupWorkflow Olfactometer2
        BehaviorSubject<Bonsai.Harp.HarpMessage> Olfactometer2Commands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.Olfactometer.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)
        -> PublishSubject Olfactometer2Events => #3
        -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel0ActualFlow)
        #3 -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel1ActualFlow)
        #3 -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel2ActualFlow)
        #3 -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel3ActualFlow)
        #3 -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel4ActualFlow)

    GroupWorkflow white_rabbit
        BehaviorSubject<Bonsai.Harp.HarpMessage> HarpWhiteRabbitCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> AllenNeuralDynamics.WhiteRabbit.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM9)
        -> PublishSubject HarpWhiteRabbitEvents
        -> WorkflowOutput

GroupWorkflow ManualControl
    Bonsai.Windows.Input.KeyDown(Filter="RButton B Shift", SuppressRepetitions=false)
    -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Enabled)) => #1
    Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 A D E Shift", SuppressRepetitions=false)
    -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled)) => #3
    Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannelsTargetFlowPayload(Channel0=100, Channel1=100, Channel2=100, Channel3=100, Channel4=900)) => #4
    Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDI0TriggerPayload(DI0Trigger=Sync)) => #5
    #1, #3, #4, #5 -> Merge
    -> MulticastSubject Olfactometer1Commands => #7
    SubscribeSubject Olfactometer1Events => #8
    #7, #8 -> SubscribeWhen

    Bonsai.Windows.Input.KeyDown(Filter="RButton B Shift", SuppressRepetitions=false)
    -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Enabled)) => #11
    Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 A D E Shift", SuppressRepetitions=false)
    -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled)) => #13
    Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannelsTargetFlowPayload(Channel0=100, Channel1=100, Channel2=100, Channel3=100, Channel4=900)) => #14
    Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDI0TriggerPayload(DI0Trigger=Sync)) => #15
    #11, #13, #14, #15 -> Merge
    -> MulticastSubject Olfactometer2Commands => #17
    SubscribeSubject Olfactometer2Events => #18
    #17, #18 -> SubscribeWhen

    Bonsai.Windows.Input.KeyDown(Filter="RButton B Shift", SuppressRepetitions=false)
    -> AllenNeuralDynamics.WhiteRabbit.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.WhiteRabbit.CreateAuxPortModePayload(AuxPortMode=PPS))
    -> MulticastSubject HarpWhiteRabbitCommands

    Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 A D E Shift", SuppressRepetitions=false)
    -> AllenNeuralDynamics.WhiteRabbit.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.WhiteRabbit.CreateAuxPortModePayload(AuxPortMode=Disabled))
    -> MulticastSubject HarpWhiteRabbitCommands

GroupWorkflow "odor loop"
    ExternalizedMapping(FileName)
    -> Bonsai.IO.CsvReader(FileName="test_1to8 - Copy.csv", ScanPattern=%i, SkipRows=0)
    -> CreateObservable "8 odor BLOCK"
        WorkflowInput Source1
        -> SelectMany LOOP => #1
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform 8odor_block
              Expression:
                it == 1  ? "D1:1" :
                it == 2  ? "D1:2" :
                it == 3  ? "D1:3" :
                it == 4  ? "D1:4" :
                it == 5  ? "D1:5" :
                it == 6  ? "D1:6" :
                it == 7  ? "D1:7" :
                it == 8  ? "D1:8" :
                "D1:0"
            -> Parse(Pattern=D1:%i, Separator="")
            -> GroupWorkflow StimBlockOdorSelector_loop_Dout
                WorkflowInput Source1 => #0
                ExternalizedMapping(Selector) => #1
                #0, #1 -> SelectMany StimBlockOdor
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Selector) => #1
                    #0, #1 -> MemberSelector(Selector=it)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                      Expression: int32(Math.Pow(2,it-1))
                    -> Bonsai.Scripting.Expressions.ExpressionCondition
                      Expression: it <= 8
                    -> GroupWorkflow StimBlock1 => #5
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Name) => #1
                        #0, #1 -> SelectMany OpenOdorValve => #2
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        #2, #1 -> SelectMany OpenFlushVavle
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateValveSetPayload(ValveSet=EndValve1)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        -> SelectMany digital1_high => #4
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputSetPayload(DigitalOutputSet=DO1)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        #4, #1 -> SelectMany OpenCheckValve
                            WorkflowInput Source1 => #0
                            -> LeftShift(Value=8)
                            -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet) => #2
                            ExternalizedMapping(Name) => #3
                            #2, #3 -> MulticastSubject Olfactometer1Commands => #4
                            PropertySource<Delay,System.TimeSpan>(MemberName=CheckValveDelay, Value="")
                            -> PropertyMapping(DueTime) => #6
                            #4, #6 -> Delay(DueTime=PT25S) => #7
                            #0, #7 -> Sample
                            -> WorkflowOutput
                        -> SelectMany digital1_low
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputClearPayload(DigitalOutputClear=DO1)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        -> SelectMany digital0_high
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputSetPayload(DigitalOutputSet=DO0)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        -> SelectMany OpenEndValve0
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateValveSetPayload(ValveSet=EndValve0)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            ExternalizedMapping(DueTime) => #4
                            #3, #4 -> Delay(DueTime=PT4S) => #5
                            #0, #5 -> Sample
                            -> WorkflowOutput
                        -> SelectMany CloseEndValve0
                            WorkflowInput Source1
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateValveClearPayload(ValveClear=EndValve0)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands
                            -> WorkflowOutput
                        -> SelectMany digital0_low
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputClearPayload(DigitalOutputClear=DO0)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        -> SelectMany CloseOdorValve => #11
                            WorkflowInput Source1
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateOdorValveStatePayload(OdorValveState=None))
                            -> MulticastSubject Olfactometer1Commands
                            -> WorkflowOutput
                        #11, #1 -> SelectMany CloseCheckValve
                            WorkflowInput Source1
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateCheckValveStatePayload(CheckValveState=None)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands
                            -> WorkflowOutput
                        -> WorkflowOutput
                    #3 -> Bonsai.Scripting.Expressions.ExpressionCondition
                      Expression: it > 8
                    -> RightShift(Value=4)
                    -> GroupWorkflow StimBlock2 => #8
                        WorkflowInput Source1
                        -> SelectMany CloseFlushVavle => #1
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateValveClearPayload(ValveClear=EndValve1)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        ExternalizedMapping(Name) => #2
                        #1, #2 -> SelectMany OpenOdorValve
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.OdorValveState) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer2Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        -> SelectMany digital1_high => #4
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputSetPayload(DigitalOutputSet=DO1)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        #4, #2 -> SelectMany OpenCheckValve
                            WorkflowInput Source1
                            -> LeftShift(Value=8)
                            -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.CheckValveState) => #2
                            ExternalizedMapping(Name) => #3
                            #2, #3 -> MulticastSubject Olfactometer2Commands => #4
                            SubscribeSubject CheckValveDelay
                            -> PropertyMapping(DueTime) => #6
                            #4, #6 -> Delay(DueTime=PT25S)
                            -> WorkflowOutput
                        -> SelectMany digital1_low
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputClearPayload(DigitalOutputClear=DO1)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        -> SelectMany digital0_high
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputSetPayload(DigitalOutputSet=DO0)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        -> SelectMany OpenEndValve0
                            WorkflowInput Source1
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEndValveStatePayload(EndValveState=EndValve0)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            ExternalizedMapping(DueTime) => #4
                            #3, #4 -> Delay(DueTime=PT4S)
                            -> WorkflowOutput
                        -> SelectMany CloseEndValve0
                            WorkflowInput Source1
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateValveClearPayload(ValveClear=EndValve0)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands
                            -> WorkflowOutput
                        -> SelectMany digital0_low
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputClearPayload(DigitalOutputClear=DO0)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        -> SelectMany CloseOdorValve => #11
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateOdorValveStatePayload(OdorValveState=None)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer2Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        #11, #2 -> SelectMany CloseCheckValve
                            WorkflowInput Source1
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateCheckValveStatePayload(CheckValveState=None)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer2Commands
                            -> WorkflowOutput
                        -> WorkflowOutput
                    #5, #8 -> Merge => #9
                    #0, #9 -> Sample
                    -> WorkflowOutput
                -> WorkflowOutput
            -> WorkflowOutput
        Defer ITI => #2
            SubscribeSubject randITI
            -> Bonsai.Numerics.Distributions.Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT1S)
            -> WorkflowOutput
        #1, #2 -> SubscribeWhen
        -> WorkflowOutput
    -> Concat => #3
    Bonsai.Windows.Input.KeyDown(Filter="Space Shift", SuppressRepetitions=false)
    -> Delay(DueTime=PT1H) => #5
    #3, #5 -> SubscribeWhen

    Bonsai.Numerics.CreateRandom(Seed=nil) => #7
    -> Disable Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=24)
    -> Disable AsyncSubject rand1to24
    #7 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=25, Upper=45)
    -> AsyncSubject randITI

GroupWorkflow Logging => #3
    SubscribeSubject Olfactometer1Events
    -> Harp.Olfactometer.DeviceDataWriter(Path=device1_test_dout, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

    SubscribeSubject Olfactometer2Events
    -> Harp.Olfactometer.DeviceDataWriter(Path=device2_test_dout, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)
Bonsai.Windows.Input.KeyDown(Filter=None, SuppressRepetitions=false) => #4
#3, #4 -> SubscribeWhen

PropertySource<Delay,System.TimeSpan>(MemberName=CheckValveDelay, Value="")
-> BehaviorSubject CheckValveDelay

PropertySource<Delay,System.TimeSpan>(MemberName=CheckValveDelay, Value="")
-> BehaviorSubject EndValve0Delay
