<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="py:CreateRuntime">
            <py:ScriptPath>sniff.py</py:ScriptPath>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="al:AudioCapture">
            <al:SampleRate>44100</al:SampleRate>
            <al:SampleFormat>Mono16</al:SampleFormat>
            <al:BufferLength>10</al:BufferLength>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:FrequencyFilter">
            <dsp:SampleRate>44100</dsp:SampleRate>
            <dsp:Cutoff1>80</dsp:Cutoff1>
            <dsp:Cutoff2>4000</dsp:Cutoff2>
            <dsp:KernelLength>60</dsp:KernelLength>
            <dsp:FilterType>BandPass</dsp:FilterType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:DetectSpikes">
            <dsp:Delay>60</dsp:Delay>
            <dsp:Length>120</dsp:Length>
            <dsp:Threshold>
              <dsp:double>7000</dsp:double>
            </dsp:Threshold>
            <dsp:WaveformRefinement>AlignPeaks</dsp:WaveformRefinement>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Sum" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Val0</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GreaterThan">
          <Operand xsi:type="DoubleProperty">
            <Value>10000</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[# Sniff Detection

- Sampling: 10kHz
]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixReader">
          <dsp:Path>Rose_2025100701_protocol1_day01_g0_t0.nidq.bin</dsp:Path>
          <dsp:Offset>0</dsp:Offset>
          <dsp:SampleRate>10000</dsp:SampleRate>
          <dsp:ChannelCount>9</dsp:ChannelCount>
          <dsp:BufferLength>100</dsp:BufferLength>
          <dsp:Depth>S16</dsp:Depth>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>0</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:TimeInterval" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FrequencyFilter">
          <dsp:SampleRate>10000</dsp:SampleRate>
          <dsp:Cutoff1>0.001</dsp:Cutoff1>
          <dsp:Cutoff2>100</dsp:Cutoff2>
          <dsp:KernelLength>1000</dsp:KernelLength>
          <dsp:FilterType>BandPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:DetectSpikes">
          <dsp:Delay>1000</dsp:Delay>
          <dsp:Length>2000</dsp:Length>
          <dsp:Threshold>
            <dsp:double>100</dsp:double>
          </dsp:Threshold>
          <dsp:WaveformRefinement>AlignPeaks</dsp:WaveformRefinement>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Count</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>SniffDetected</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="dsp:ConvertToArray">
          <dsp:Depth>S16</dsp:Depth>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="py:ObserveOnGIL" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="py:Set">
            <py:VariableName>buffer</py:VariableName>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="py:Eval">
            <py:Expression>count_sniffs()</py:Expression>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="py:Get">
            <py:VariableName>sniff_count</py:VariableName>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="scr:ExpressionTransform">
          <scr:Expression>int32.Parse(it.ToString())</scr:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SniffDetected</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>RunMyTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="18" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>