WorkflowBuilder(Version=2.9.0)
GroupWorkflow "Define Device"
    ExternalizedMapping(PortName(DisplayName=Olfactometer1))
    -> GroupWorkflow Olfactometer1
        BehaviorSubject<Bonsai.Harp.HarpMessage> Olfactometer1Commands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.Olfactometer.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
        -> PublishSubject Olfactometer1Events => #3
        -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel0ActualFlow)
        #3 -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel1ActualFlow)
        #3 -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel2ActualFlow)
        #3 -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel3ActualFlow)
        #3 -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel4ActualFlow)

    ExternalizedMapping(PortName(DisplayName=Olfactometer2))
    -> GroupWorkflow Olfactometer2
        BehaviorSubject<Bonsai.Harp.HarpMessage> Olfactometer2Commands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.Olfactometer.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)
        -> PublishSubject Olfactometer2Events => #3
        -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel0ActualFlow)
        #3 -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel1ActualFlow)
        #3 -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel2ActualFlow)
        #3 -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel3ActualFlow)
        #3 -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.Channel4ActualFlow)

    ExternalizedMapping(PortName(DisplayName=WhiteRabbit))
    -> GroupWorkflow white_rabbit
        BehaviorSubject<Bonsai.Harp.HarpMessage> HarpWhiteRabbitCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> AllenNeuralDynamics.WhiteRabbit.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM9)
        -> PublishSubject HarpWhiteRabbitEvents
        -> WorkflowOutput

GroupWorkflow "Initialize Device"
    ExternalizedMapping(Filter(DisplayName=StartFlow)) => #0
    -> Bonsai.Windows.Input.KeyDown(Filter="RButton B Shift", SuppressRepetitions=false)
    -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Enabled)) => #2
    ExternalizedMapping(Filter(DisplayName=DisableFlow)) => #3
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 A D E Shift", SuppressRepetitions=false)
    -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled)) => #5
    Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDI0TriggerPayload(DI0Trigger=Sync)) => #6
    Disable Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel0TargetFlowPayload(Channel0TargetFlow=100)) => #7
    Disable Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel1TargetFlowPayload(Channel1TargetFlow=100)) => #8
    Disable Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel2TargetFlowPayload(Channel2TargetFlow=100)) => #9
    Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel3TargetFlowPayload(Channel3TargetFlow=0)) => #10
    Disable Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannelsTargetFlowPayload(Channel0=100, Channel1=100, Channel2=100, Channel3=100, Channel4=900)) => #11
    #2, #5, #6, #7, #8, #9, #10, #11 -> Merge
    -> MulticastSubject Olfactometer1Commands => #13
    SubscribeSubject Olfactometer1Events => #14
    #13, #14 -> SubscribeWhen
    #0 -> Bonsai.Windows.Input.KeyDown(Filter="RButton B Shift", SuppressRepetitions=false)
    -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Enabled)) => #17
    #3 -> Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 A D E Shift", SuppressRepetitions=false)
    -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled)) => #19
    Disable Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannelsTargetFlowPayload(Channel0=100, Channel1=100, Channel2=100, Channel3=100, Channel4=900)) => #20
    Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDI0TriggerPayload(DI0Trigger=Sync)) => #21
    Disable Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel0TargetFlowPayload(Channel0TargetFlow=100)) => #22
    Disable Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel1TargetFlowPayload(Channel1TargetFlow=100)) => #23
    Disable Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel2TargetFlowPayload(Channel2TargetFlow=100)) => #24
    Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel3TargetFlowPayload(Channel3TargetFlow=0)) => #25
    Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel4TargetFlowPayload(Channel4TargetFlow=0)) => #26
    #17, #19, #20, #21, #22, #23, #24, #25, #26 -> Merge
    -> MulticastSubject Olfactometer2Commands => #28
    SubscribeSubject Olfactometer2Events => #29
    #28, #29 -> SubscribeWhen

    ExternalizedMapping(Filter(DisplayName=StartPPS))
    -> Bonsai.Windows.Input.KeyDown
      Filter: LButton RButton Cancel MButton XButton1 XButton2 ShiftKey ControlKey Menu Pause Capital CapsLock KanaMode HanguelMode HangulMode JunjaMode A B C D E F G P Q R S T U V W Shift
      SuppressRepetitions=false
    -> AllenNeuralDynamics.WhiteRabbit.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.WhiteRabbit.CreateAuxPortModePayload(AuxPortMode=PPS))
    -> MulticastSubject HarpWhiteRabbitCommands

    ExternalizedMapping(Filter(DisplayName=EndPPS))
    -> Bonsai.Windows.Input.KeyDown
      Filter: LButton RButton Cancel MButton XButton1 XButton2 ShiftKey ControlKey Menu Pause Capital CapsLock KanaMode HanguelMode HangulMode JunjaMode A B C D E F G P Q R S T U V W Control Alt
      SuppressRepetitions=false
    -> AllenNeuralDynamics.WhiteRabbit.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.WhiteRabbit.CreateAuxPortModePayload(AuxPortMode=Disabled))
    -> MulticastSubject HarpWhiteRabbitCommands

GroupWorkflow "Odor loop"
    ExternalizedMapping(Count, Start)
    -> Range(Start=1, Count=640) => #1
    ExternalizedMapping("charge time", Expression, EndV0Delay) => #2
    #1, #2 -> CreateObservable "6 odor BLOCK"
        WorkflowInput Source1 => #0
        ExternalizedMapping("charge time", Expression, EndV0Delay) => #1
        #0, #1 -> SelectMany LOOP => #2
            WorkflowInput Source1 => #0
            ExternalizedMapping(Expression) => #1
            #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform 6odor_block
              Expression:
                it == 1  ? "1,2,3,0,6,7,5,5,5,0,5,5,800" :
                it == 2  ? "0,2,3,5,0,0,0,3,3,3,0,0,800" :
                it == 3  ? "1,0,3,0,0,0,2,0,2,0,0,0,800" :
                it == 4  ? "1,0,0,0,6,0,2,0,0,0,2,0,800" :
                it == 5  ? "0,2,3,0,0,7,0,3,3,0,0,3,800" :
                it == 6  ? "1,0,3,5,0,7,4,0,4,4,0,4,800" :
                it == 7  ? "1,2,0,5,0,7,4,4,0,4,0,4,800" :
                it == 8  ? "0,0,3,0,6,7,0,0,3,0,3,3,800" :
                it == 9  ? "1,0,3,5,6,7,5,0,5,5,5,5,800" :
                it == 10 ? "1,0,3,0,6,7,4,0,4,0,4,4,800" :
                it == 11 ? "0,2,3,0,0,0,0,2,2,0,0,0,800" :
                it == 12 ? "0,0,3,5,0,7,0,0,3,3,0,3,800" :
                it == 13 ? "1,2,3,5,6,0,5,5,5,5,5,0,800" :
                it == 14 ? "0,2,3,0,6,7,0,4,4,0,4,4,800" :
                it == 15 ? "1,2,0,0,0,0,2,2,0,0,0,0,800" :
                it == 16 ? "1,0,0,0,6,7,3,0,0,0,3,3,800" :
                it == 17 ? "0,2,3,5,0,7,0,4,4,4,0,4,800" :
                it == 18 ? "0,0,0,5,6,0,0,0,0,2,2,0,800" :
                it == 19 ? "1,0,0,5,6,0,3,0,0,3,3,0,800" :
                it == 20 ? "1,0,0,0,0,0,1,0,0,0,0,0,800" :
                it == 21 ? "0,0,0,0,6,7,0,0,0,0,2,2,800" :
                it == 22 ? "0,2,3,5,6,0,0,4,4,4,4,0,800" :
                it == 23 ? "1,2,0,5,6,0,4,4,0,4,4,0,800" :
                it == 24 ? "0,2,0,0,6,7,0,3,0,0,3,3,800" :
                it == 25 ? "1,0,0,5,0,7,3,0,0,3,0,3,800" :
                it == 26 ? "0,0,3,5,6,0,0,0,3,3,3,0,800" :
                it == 27 ? "1,0,3,5,6,0,4,0,4,4,4,0,800" :
                it == 28 ? "0,0,3,0,0,7,0,0,2,0,0,2,800" :
                it == 29 ? "0,2,3,5,6,7,0,5,5,5,5,5,800" :
                it == 30 ? "1,2,0,0,6,0,3,3,0,0,3,0,800" :
                it == 31 ? "1,0,0,5,0,0,2,0,0,2,0,0,800" :
                it == 32 ? "1,0,0,0,0,7,2,0,0,0,0,2,800" :
                it == 33 ? "1,2,3,0,0,0,3,3,3,0,0,0,800" :
                it == 34 ? "0,0,3,5,0,0,0,0,2,2,0,0,800" :
                it == 35 ? "0,0,3,0,0,0,0,0,1,0,0,0,800" :
                it == 36 ? "1,2,0,5,6,7,5,5,0,5,5,5,800" :
                it == 37 ? "1,2,0,0,0,7,3,3,0,0,0,3,800" :
                it == 38 ? "0,0,3,0,6,0,0,0,2,0,2,0,800" :
                it == 39 ? "0,2,0,5,0,0,0,2,0,2,0,0,800" :
                it == 40 ? "1,2,3,5,6,7,6,6,6,6,6,6,800" :
                it == 41 ? "0,2,0,0,6,0,0,2,0,0,2,0,800" :
                it == 42 ? "0,0,0,0,0,7,0,0,0,0,0,1,800" :
                it == 43 ? "1,2,0,0,6,7,4,4,0,0,4,4,800" :
                it == 44 ? "0,0,0,5,0,7,0,0,0,2,0,2,800" :
                it == 45 ? "1,2,3,5,0,7,5,5,5,5,0,5,800" :
                it == 46 ? "1,2,3,0,0,7,4,4,4,0,0,4,800" :
                it == 47 ? "1,0,3,5,0,0,3,0,3,3,0,0,800" :
                it == 48 ? "0,0,0,0,6,0,0,0,0,0,1,0,800" :
                it == 49 ? "1,2,3,0,6,0,4,4,4,0,4,0,800" :
                it == 50 ? "0,0,0,0,0,0,0,0,0,0,0,0,900" :
                it == 51 ? "0,2,0,5,0,7,0,3,0,3,0,3,800" :
                it == 52 ? "0,0,0,5,0,0,0,0,0,1,0,0,800" :
                it == 53 ? "0,0,0,5,6,7,0,0,0,3,3,3,800" :
                it == 54 ? "0,2,0,5,6,7,0,4,0,4,4,4,800" :
                it == 55 ? "0,2,0,0,0,0,0,1,0,0,0,0,800" :
                it == 56 ? "0,0,3,5,6,7,0,0,4,4,4,4,800" :
                it == 57 ? "1,0,3,0,6,0,3,0,3,0,3,0,800" :
                it == 58 ? "1,0,3,0,0,7,3,0,3,0,0,3,800" :
                it == 59 ? "1,2,3,5,0,0,4,4,4,4,0,0,800" :
                it == 60 ? "0,2,0,0,0,7,0,2,0,0,0,2,800" :
                it == 61 ? "1,2,0,5,0,0,3,3,0,3,0,0,800" :
                it == 62 ? "1,0,0,5,6,7,4,0,0,4,4,4,800" :
                it == 63 ? "0,2,0,5,6,0,0,3,0,3,3,0,800" :
                it == 64 ? "0,2,3,0,6,0,0,3,3,0,3,0,800" :
                it == 65 ? "0,2,0,0,0,0,0,1,0,0,0,0,800" :
                it == 66 ? "1,0,0,0,0,7,2,0,0,0,0,2,800" :
                it == 67 ? "0,2,3,5,0,0,0,3,3,3,0,0,800" :
                it == 68 ? "0,0,0,0,0,7,0,0,0,0,0,1,800" :
                it == 69 ? "0,2,0,5,0,0,0,2,0,2,0,0,800" :
                it == 70 ? "0,0,0,0,6,0,0,0,0,0,1,0,800" :
                it == 71 ? "1,2,3,5,0,0,4,4,4,4,0,0,800" :
                it == 72 ? "0,0,3,5,6,7,0,0,4,4,4,4,800" :
                it == 73 ? "0,0,3,0,0,0,0,0,1,0,0,0,800" :
                it == 74 ? "1,2,3,0,0,7,4,4,4,0,0,4,800" :
                it == 75 ? "0,2,3,5,6,0,0,4,4,4,4,0,800" :
                it == 76 ? "0,2,0,0,0,7,0,2,0,0,0,2,800" :
                it == 77 ? "1,2,0,5,6,0,4,4,0,4,4,0,800" :
                it == 78 ? "1,2,3,0,6,7,5,5,5,0,5,5,800" :
                it == 79 ? "1,0,3,5,0,7,4,0,4,4,0,4,800" :
                it == 80 ? "0,2,3,0,6,7,0,4,4,0,4,4,800" :
                it == 81 ? "0,0,3,0,6,0,0,0,2,0,2,0,800" :
                it == 82 ? "1,2,3,5,6,0,5,5,5,5,5,0,800" :
                it == 83 ? "1,0,0,0,6,7,3,0,0,0,3,3,800" :
                it == 84 ? "0,0,0,5,6,0,0,0,0,2,2,0,800" :
                it == 85 ? "1,2,0,5,0,7,4,4,0,4,0,4,800" :
                it == 86 ? "1,0,3,5,6,0,4,0,4,4,4,0,800" :
                it == 87 ? "1,2,3,0,0,0,3,3,3,0,0,0,800" :
                it == 88 ? "0,0,0,5,6,7,0,0,0,3,3,3,800" :
                it == 89 ? "0,0,3,5,6,0,0,0,3,3,3,0,800" :
                it == 90 ? "1,0,0,5,6,7,4,0,0,4,4,4,800" :
                it == 91 ? "0,0,3,0,0,7,0,0,2,0,0,2,800" :
                it == 92 ? "1,2,0,5,0,0,3,3,0,3,0,0,800" :
                it == 93 ? "0,0,0,5,0,0,0,0,0,1,0,0,800" :
                it == 94 ? "1,0,0,5,0,0,2,0,0,2,0,0,800" :
                it == 95 ? "0,2,0,0,6,0,0,2,0,0,2,0,800" :
                it == 96 ? "0,0,3,0,6,7,0,0,3,0,3,3,800" :
                it == 97 ? "1,0,3,5,6,7,5,0,5,5,5,5,800" :
                it == 98 ? "0,2,3,0,6,0,0,3,3,0,3,0,800" :
                it == 99 ? "1,0,0,5,6,0,3,0,0,3,3,0,800" :
                it == 100 ? "1,0,0,0,0,0,1,0,0,0,0,0,800" :
                it == 101 ? "0,0,0,5,0,7,0,0,0,2,0,2,800" :
                it == 102 ? "0,2,3,5,6,7,0,5,5,5,5,5,800" :
                it == 103 ? "1,2,3,5,0,7,5,5,5,5,0,5,800" :
                it == 104 ? "0,2,0,5,6,7,0,4,0,4,4,4,800" :
                it == 105 ? "1,2,0,0,6,7,4,4,0,0,4,4,800" :
                it == 106 ? "0,2,3,0,0,7,0,3,3,0,0,3,800" :
                it == 107 ? "1,2,3,0,6,0,4,4,4,0,4,0,800" :
                it == 108 ? "0,0,0,0,6,7,0,0,0,0,2,2,800" :
                it == 109 ? "0,2,3,0,0,0,0,2,2,0,0,0,800" :
                it == 110 ? "1,2,3,5,6,7,6,6,6,6,6,6,800" :
                it == 111 ? "0,0,3,5,0,7,0,0,3,3,0,3,800" :
                it == 112 ? "1,0,3,0,0,0,2,0,2,0,0,0,800" :
                it == 113 ? "1,2,0,0,0,0,2,2,0,0,0,0,800" :
                it == 114 ? "1,2,0,5,6,7,5,5,0,5,5,5,800" :
                it == 115 ? "0,2,0,5,0,7,0,3,0,3,0,3,800" :
                it == 116 ? "1,0,3,0,6,0,3,0,3,0,3,0,800" :
                it == 117 ? "1,0,3,0,6,7,4,0,4,0,4,4,800" :
                it == 118 ? "1,0,0,5,0,7,3,0,0,3,0,3,800" :
                it == 119 ? "1,0,0,0,6,0,2,0,0,0,2,0,800" :
                it == 120 ? "0,2,3,5,0,7,0,4,4,4,0,4,800" :
                it == 121 ? "1,2,0,0,0,7,3,3,0,0,0,3,800" :
                it == 122 ? "0,2,0,5,6,0,0,3,0,3,3,0,800" :
                it == 123 ? "1,0,3,0,0,7,3,0,3,0,0,3,800" :
                it == 124 ? "0,0,3,5,0,0,0,0,2,2,0,0,800" :
                it == 125 ? "1,2,0,0,6,0,3,3,0,0,3,0,800" :
                it == 126 ? "0,2,0,0,6,7,0,3,0,0,3,3,800" :
                it == 127 ? "1,0,3,5,0,0,3,0,3,3,0,0,800" :
                it == 128 ? "0,0,0,0,0,0,0,0,0,0,0,0,900" :
                it == 129 ? "0,2,3,0,0,0,0,2,2,0,0,0,800" :
                it == 130 ? "0,0,3,5,6,0,0,0,3,3,3,0,800" :
                it == 131 ? "1,0,0,0,0,0,1,0,0,0,0,0,800" :
                it == 132 ? "0,0,3,5,6,7,0,0,4,4,4,4,800" :
                it == 133 ? "0,0,0,5,0,7,0,0,0,2,0,2,800" :
                it == 134 ? "1,2,3,5,6,7,6,6,6,6,6,6,800" :
                it == 135 ? "1,0,0,0,0,7,2,0,0,0,0,2,800" :
                it == 136 ? "1,0,3,0,6,7,4,0,4,0,4,4,800" :
                it == 137 ? "0,0,0,0,0,0,0,0,0,0,0,0,900" :
                it == 138 ? "1,2,3,5,0,7,5,5,5,5,0,5,800" :
                it == 139 ? "0,0,3,0,0,7,0,0,2,0,0,2,800" :
                it == 140 ? "0,2,0,5,0,7,0,3,0,3,0,3,800" :
                it == 141 ? "1,2,3,0,0,7,4,4,4,0,0,4,800" :
                it == 142 ? "1,0,0,5,0,0,2,0,0,2,0,0,800" :
                it == 143 ? "1,0,3,5,6,0,4,0,4,4,4,0,800" :
                it == 144 ? "0,2,0,0,0,0,0,1,0,0,0,0,800" :
                it == 145 ? "0,0,3,0,6,7,0,0,3,0,3,3,800" :
                it == 146 ? "0,2,3,0,6,7,0,4,4,0,4,4,800" :
                it == 147 ? "0,2,3,5,6,0,0,4,4,4,4,0,800" :
                it == 148 ? "0,2,0,0,0,7,0,2,0,0,0,2,800" :
                it == 149 ? "1,2,3,5,6,0,5,5,5,5,5,0,800" :
                it == 150 ? "0,0,3,0,6,0,0,0,2,0,2,0,800" :
                it == 151 ? "0,2,0,5,0,0,0,2,0,2,0,0,800" :
                it == 152 ? "1,2,3,0,6,0,4,4,4,0,4,0,800" :
                it == 153 ? "0,2,3,5,6,7,0,5,5,5,5,5,800" :
                it == 154 ? "0,2,0,0,6,0,0,2,0,0,2,0,800" :
                it == 155 ? "1,0,3,0,6,0,3,0,3,0,3,0,800" :
                it == 156 ? "1,0,3,5,0,7,4,0,4,4,0,4,800" :
                it == 157 ? "0,0,0,5,6,0,0,0,0,2,2,0,800" :
                it == 158 ? "0,2,0,5,6,0,0,3,0,3,3,0,800" :
                it == 159 ? "1,2,0,0,6,7,4,4,0,0,4,4,800" :
                it == 160 ? "1,0,3,5,6,7,5,0,5,5,5,5,800" :
                it == 161 ? "1,2,0,0,6,0,3,3,0,0,3,0,800" :
                it == 162 ? "1,0,0,0,6,0,2,0,0,0,2,0,800" :
                it == 163 ? "0,0,0,5,6,7,0,0,0,3,3,3,800" :
                it == 164 ? "1,2,0,5,0,0,3,3,0,3,0,0,800" :
                it == 165 ? "1,2,0,5,6,0,4,4,0,4,4,0,800" :
                it == 166 ? "1,2,0,5,0,7,4,4,0,4,0,4,800" :
                it == 167 ? "1,0,3,5,0,0,3,0,3,3,0,0,800" :
                it == 168 ? "0,0,0,5,0,0,0,0,0,1,0,0,800" :
                it == 169 ? "0,0,3,5,0,0,0,0,2,2,0,0,800" :
                it == 170 ? "1,0,3,0,0,0,2,0,2,0,0,0,800" :
                it == 171 ? "1,2,3,5,0,0,4,4,4,4,0,0,800" :
                it == 172 ? "1,0,0,0,6,7,3,0,0,0,3,3,800" :
                it == 173 ? "0,0,3,0,0,0,0,0,1,0,0,0,800" :
                it == 174 ? "1,2,3,0,6,7,5,5,5,0,5,5,800" :
                it == 175 ? "1,0,0,5,0,7,3,0,0,3,0,3,800" :
                it == 176 ? "1,2,0,0,0,7,3,3,0,0,0,3,800" :
                it == 177 ? "0,0,0,0,0,7,0,0,0,0,0,1,800" :
                it == 178 ? "0,2,3,5,0,7,0,4,4,4,0,4,800" :
                it == 179 ? "0,0,0,0,6,7,0,0,0,0,2,2,800" :
                it == 180 ? "1,0,3,0,0,7,3,0,3,0,0,3,800" :
                it == 181 ? "0,2,0,5,6,7,0,4,0,4,4,4,800" :
                it == 182 ? "1,0,0,5,6,7,4,0,0,4,4,4,800" :
                it == 183 ? "0,0,3,5,0,7,0,0,3,3,0,3,800" :
                it == 184 ? "1,2,0,0,0,0,2,2,0,0,0,0,800" :
                it == 185 ? "0,0,0,0,6,0,0,0,0,0,1,0,800" :
                it == 186 ? "1,2,0,5,6,7,5,5,0,5,5,5,800" :
                it == 187 ? "0,2,3,0,0,7,0,3,3,0,0,3,800" :
                it == 188 ? "0,2,3,0,6,0,0,3,3,0,3,0,800" :
                it == 189 ? "1,2,3,0,0,0,3,3,3,0,0,0,800" :
                it == 190 ? "0,2,0,0,6,7,0,3,0,0,3,3,800" :
                it == 191 ? "0,2,3,5,0,0,0,3,3,3,0,0,800" :
                it == 192 ? "1,0,0,5,6,0,3,0,0,3,3,0,800" :
                it == 193 ? "1,2,0,0,6,7,4,4,0,0,4,4,800" :
                it == 194 ? "0,2,0,5,6,7,0,4,0,4,4,4,800" :
                it == 195 ? "0,0,0,5,6,7,0,0,0,3,3,3,800" :
                it == 196 ? "1,2,3,0,6,7,5,5,5,0,5,5,800" :
                it == 197 ? "0,0,0,0,0,7,0,0,0,0,0,1,800" :
                it == 198 ? "0,2,3,5,6,0,0,4,4,4,4,0,800" :
                it == 199 ? "0,2,0,5,0,7,0,3,0,3,0,3,800" :
                it == 200 ? "1,0,0,0,0,0,1,0,0,0,0,0,800" :
                it == 201 ? "1,0,0,0,6,0,2,0,0,0,2,0,800" :
                it == 202 ? "1,0,0,5,0,0,2,0,0,2,0,0,800" :
                it == 203 ? "1,2,3,5,0,7,5,5,5,5,0,5,800" :
                it == 204 ? "0,2,3,0,0,0,0,2,2,0,0,0,800" :
                it == 205 ? "0,0,3,5,0,7,0,0,3,3,0,3,800" :
                it == 206 ? "0,0,3,0,0,7,0,0,2,0,0,2,800" :
                it == 207 ? "1,2,0,5,0,7,4,4,0,4,0,4,800" :
                it == 208 ? "1,0,3,5,0,7,4,0,4,4,0,4,800" :
                it == 209 ? "0,2,3,5,6,7,0,5,5,5,5,5,800" :
                it == 210 ? "0,0,0,0,0,0,0,0,0,0,0,0,900" :
                it == 211 ? "0,0,3,0,0,0,0,0,1,0,0,0,800" :
                it == 212 ? "0,2,3,5,0,7,0,4,4,4,0,4,800" :
                it == 213 ? "0,0,3,5,6,7,0,0,4,4,4,4,800" :
                it == 214 ? "1,2,0,0,0,7,3,3,0,0,0,3,800" :
                it == 215 ? "1,0,3,0,0,0,2,0,2,0,0,0,800" :
                it == 216 ? "0,0,0,5,6,0,0,0,0,2,2,0,800" :
                it == 217 ? "0,2,0,5,0,0,0,2,0,2,0,0,800" :
                it == 218 ? "1,0,3,5,6,7,5,0,5,5,5,5,800" :
                it == 219 ? "1,0,3,0,6,0,3,0,3,0,3,0,800" :
                it == 220 ? "0,0,0,0,6,7,0,0,0,0,2,2,800" :
                it == 221 ? "1,0,0,5,6,7,4,0,0,4,4,4,800" :
                it == 222 ? "0,2,0,0,0,7,0,2,0,0,0,2,800" :
                it == 223 ? "0,2,3,0,6,7,0,4,4,0,4,4,800" :
                it == 224 ? "1,2,0,5,6,0,4,4,0,4,4,0,800" :
                it == 225 ? "0,2,3,0,0,7,0,3,3,0,0,3,800" :
                it == 226 ? "1,0,3,5,0,0,3,0,3,3,0,0,800" :
                it == 227 ? "1,2,0,0,0,0,2,2,0,0,0,0,800" :
                it == 228 ? "0,0,3,0,6,0,0,0,2,0,2,0,800" :
                it == 229 ? "0,2,0,0,0,0,0,1,0,0,0,0,800" :
                it == 230 ? "1,2,3,5,0,0,4,4,4,4,0,0,800" :
                it == 231 ? "0,0,3,5,0,0,0,0,2,2,0,0,800" :
                it == 232 ? "1,2,3,5,6,0,5,5,5,5,5,0,800" :
                it == 233 ? "0,0,0,5,0,0,0,0,0,1,0,0,800" :
                it == 234 ? "1,0,3,5,6,0,4,0,4,4,4,0,800" :
                it == 235 ? "1,2,0,5,6,7,5,5,0,5,5,5,800" :
                it == 236 ? "1,2,0,5,0,0,3,3,0,3,0,0,800" :
                it == 237 ? "1,0,0,0,0,7,2,0,0,0,0,2,800" :
                it == 238 ? "0,0,0,0,6,0,0,0,0,0,1,0,800" :
                it == 239 ? "0,0,0,5,0,7,0,0,0,2,0,2,800" :
                it == 240 ? "1,0,3,0,0,7,3,0,3,0,0,3,800" :
                it == 241 ? "1,2,3,0,0,0,3,3,3,0,0,0,800" :
                it == 242 ? "1,2,3,0,6,0,4,4,4,0,4,0,800" :
                it == 243 ? "0,2,0,5,6,0,0,3,0,3,3,0,800" :
                it == 244 ? "1,2,0,0,6,0,3,3,0,0,3,0,800" :
                it == 245 ? "1,0,0,5,0,7,3,0,0,3,0,3,800" :
                it == 246 ? "0,2,3,5,0,0,0,3,3,3,0,0,800" :
                it == 247 ? "1,2,3,5,6,7,6,6,6,6,6,6,800" :
                it == 248 ? "1,0,0,5,6,0,3,0,0,3,3,0,800" :
                it == 249 ? "1,0,0,0,6,7,3,0,0,0,3,3,800" :
                it == 250 ? "0,2,0,0,6,0,0,2,0,0,2,0,800" :
                it == 251 ? "0,0,3,5,6,0,0,0,3,3,3,0,800" :
                it == 252 ? "0,2,0,0,6,7,0,3,0,0,3,3,800" :
                it == 253 ? "0,0,3,0,6,7,0,0,3,0,3,3,800" :
                it == 254 ? "1,2,3,0,0,7,4,4,4,0,0,4,800" :
                it == 255 ? "1,0,3,0,6,7,4,0,4,0,4,4,800" :
                it == 256 ? "0,2,3,0,6,0,0,3,3,0,3,0,800" :
                it == 257 ? "1,2,0,5,0,0,3,3,0,3,0,0,800" :
                it == 258 ? "1,0,3,0,0,0,2,0,2,0,0,0,800" :
                it == 259 ? "0,0,0,5,0,0,0,0,0,1,0,0,800" :
                it == 260 ? "1,0,0,5,0,0,2,0,0,2,0,0,800" :
                it == 261 ? "0,2,3,5,0,0,0,3,3,3,0,0,800" :
                it == 262 ? "1,0,0,5,0,7,3,0,0,3,0,3,800" :
                it == 263 ? "1,0,3,0,6,0,3,0,3,0,3,0,800" :
                it == 264 ? "1,2,3,5,6,7,6,6,6,6,6,6,800" :
                it == 265 ? "0,2,3,5,6,7,0,5,5,5,5,5,800" :
                it == 266 ? "0,0,3,0,0,7,0,0,2,0,0,2,800" :
                it == 267 ? "0,2,0,0,0,7,0,2,0,0,0,2,800" :
                it == 268 ? "0,0,0,5,6,0,0,0,0,2,2,0,800" :
                it == 269 ? "1,2,3,0,0,7,4,4,4,0,0,4,800" :
                it == 270 ? "0,2,0,0,6,0,0,2,0,0,2,0,800" :
                it == 271 ? "0,0,3,5,0,0,0,0,2,2,0,0,800" :
                it == 272 ? "0,2,0,5,6,0,0,3,0,3,3,0,800" :
                it == 273 ? "1,2,0,0,6,0,3,3,0,0,3,0,800" :
                it == 274 ? "1,0,3,5,6,7,5,0,5,5,5,5,800" :
                it == 275 ? "0,0,3,5,0,7,0,0,3,3,0,3,800" :
                it == 276 ? "0,0,3,0,0,0,0,0,1,0,0,0,800" :
                it == 277 ? "1,0,0,0,0,7,2,0,0,0,0,2,800" :
                it == 278 ? "0,0,3,0,6,7,0,0,3,0,3,3,800" :
                it == 279 ? "0,2,0,5,0,0,0,2,0,2,0,0,800" :
                it == 280 ? "1,2,3,0,6,0,4,4,4,0,4,0,800" :
                it == 281 ? "0,2,3,0,0,0,0,2,2,0,0,0,800" :
                it == 282 ? "1,2,3,0,0,0,3,3,3,0,0,0,800" :
                it == 283 ? "1,0,3,0,0,7,3,0,3,0,0,3,800" :
                it == 284 ? "0,0,0,0,0,7,0,0,0,0,0,1,800" :
                it == 285 ? "1,0,3,5,0,0,3,0,3,3,0,0,800" :
                it == 286 ? "0,0,0,0,6,7,0,0,0,0,2,2,800" :
                it == 287 ? "1,2,3,5,0,0,4,4,4,4,0,0,800" :
                it == 288 ? "1,2,0,0,0,7,3,3,0,0,0,3,800" :
                it == 289 ? "0,0,3,0,6,0,0,0,2,0,2,0,800" :
                it == 290 ? "0,2,0,5,6,7,0,4,0,4,4,4,800" :
                it == 291 ? "0,2,3,0,6,0,0,3,3,0,3,0,800" :
                it == 292 ? "1,0,3,5,0,7,4,0,4,4,0,4,800" :
                it == 293 ? "0,0,0,0,6,0,0,0,0,0,1,0,800" :
                it == 294 ? "0,2,3,5,6,0,0,4,4,4,4,0,800" :
                it == 295 ? "0,2,0,0,0,0,0,1,0,0,0,0,800" :
                it == 296 ? "0,2,0,5,0,7,0,3,0,3,0,3,800" :
                it == 297 ? "1,0,0,5,6,0,3,0,0,3,3,0,800" :
                it == 298 ? "1,0,3,5,6,0,4,0,4,4,4,0,800" :
                it == 299 ? "0,2,3,0,6,7,0,4,4,0,4,4,800" :
                it == 300 ? "0,2,3,0,0,7,0,3,3,0,0,3,800" :
                it == 301 ? "1,2,0,5,0,7,4,4,0,4,0,4,800" :
                it == 302 ? "0,2,0,0,6,7,0,3,0,0,3,3,800" :
                it == 303 ? "0,0,0,5,0,7,0,0,0,2,0,2,800" :
                it == 304 ? "1,0,0,5,6,7,4,0,0,4,4,4,800" :
                it == 305 ? "1,2,0,0,6,7,4,4,0,0,4,4,800" :
                it == 306 ? "1,2,0,5,6,0,4,4,0,4,4,0,800" :
                it == 307 ? "1,2,3,5,0,7,5,5,5,5,0,5,800" :
                it == 308 ? "1,0,0,0,6,0,2,0,0,0,2,0,800" :
                it == 309 ? "1,2,3,0,6,7,5,5,5,0,5,5,800" :
                it == 310 ? "1,0,3,0,6,7,4,0,4,0,4,4,800" :
                it == 311 ? "1,0,0,0,6,7,3,0,0,0,3,3,800" :
                it == 312 ? "0,0,0,0,0,0,0,0,0,0,0,0,900" :
                it == 313 ? "0,0,3,5,6,0,0,0,3,3,3,0,800" :
                it == 314 ? "0,0,3,5,6,7,0,0,4,4,4,4,800" :
                it == 315 ? "1,2,0,5,6,7,5,5,0,5,5,5,800" :
                it == 316 ? "0,2,3,5,0,7,0,4,4,4,0,4,800" :
                it == 317 ? "1,2,0,0,0,0,2,2,0,0,0,0,800" :
                it == 318 ? "1,0,0,0,0,0,1,0,0,0,0,0,800" :
                it == 319 ? "1,2,3,5,6,0,5,5,5,5,5,0,800" :
                it == 320 ? "0,0,0,5,6,7,0,0,0,3,3,3,800" :
                it == 321 ? "1,0,3,0,6,7,4,0,4,0,4,4,800" :
                it == 322 ? "1,0,0,5,0,7,3,0,0,3,0,3,800" :
                it == 323 ? "1,2,3,0,6,0,4,4,4,0,4,0,800" :
                it == 324 ? "1,0,3,5,6,0,4,0,4,4,4,0,800" :
                it == 325 ? "1,2,3,5,0,7,5,5,5,5,0,5,800" :
                it == 326 ? "1,2,0,0,0,0,2,2,0,0,0,0,800" :
                it == 327 ? "0,2,0,5,6,0,0,3,0,3,3,0,800" :
                it == 328 ? "1,2,3,0,0,0,3,3,3,0,0,0,800" :
                it == 329 ? "0,2,3,0,0,7,0,3,3,0,0,3,800" :
                it == 330 ? "0,0,3,5,0,7,0,0,3,3,0,3,800" :
                it == 331 ? "1,0,0,0,0,7,2,0,0,0,0,2,800" :
                it == 332 ? "0,2,3,5,0,7,0,4,4,4,0,4,800" :
                it == 333 ? "1,2,0,0,0,7,3,3,0,0,0,3,800" :
                it == 334 ? "1,0,3,0,0,7,3,0,3,0,0,3,800" :
                it == 335 ? "0,2,3,5,0,0,0,3,3,3,0,0,800" :
                it == 336 ? "0,0,3,0,0,7,0,0,2,0,0,2,800" :
                it == 337 ? "0,2,3,0,6,0,0,3,3,0,3,0,800" :
                it == 338 ? "1,2,0,5,6,0,4,4,0,4,4,0,800" :
                it == 339 ? "1,0,0,5,0,0,2,0,0,2,0,0,800" :
                it == 340 ? "1,2,0,0,6,0,3,3,0,0,3,0,800" :
                it == 341 ? "1,0,3,5,0,0,3,0,3,3,0,0,800" :
                it == 342 ? "1,0,3,0,6,0,3,0,3,0,3,0,800" :
                it == 343 ? "0,2,0,0,6,7,0,3,0,0,3,3,800" :
                it == 344 ? "1,0,3,5,6,7,5,0,5,5,5,5,800" :
                it == 345 ? "0,0,0,0,0,0,0,0,0,0,0,0,900" :
                it == 346 ? "0,0,0,0,6,7,0,0,0,0,2,2,800" :
                it == 347 ? "0,0,3,0,6,7,0,0,3,0,3,3,800" :
                it == 348 ? "0,0,0,5,0,0,0,0,0,1,0,0,800" :
                it == 349 ? "1,0,0,0,6,7,3,0,0,0,3,3,800" :
                it == 350 ? "1,2,0,5,0,7,4,4,0,4,0,4,800" :
                it == 351 ? "0,0,0,5,0,7,0,0,0,2,0,2,800" :
                it == 352 ? "0,2,0,0,6,0,0,2,0,0,2,0,800" :
                it == 353 ? "1,2,3,0,6,7,5,5,5,0,5,5,800" :
                it == 354 ? "1,0,3,5,0,7,4,0,4,4,0,4,800" :
                it == 355 ? "0,0,0,0,0,7,0,0,0,0,0,1,800" :
                it == 356 ? "1,0,3,0,0,0,2,0,2,0,0,0,800" :
                it == 357 ? "0,2,0,5,6,7,0,4,0,4,4,4,800" :
                it == 358 ? "0,2,3,0,6,7,0,4,4,0,4,4,800" :
                it == 359 ? "1,2,0,0,6,7,4,4,0,0,4,4,800" :
                it == 360 ? "0,2,0,5,0,7,0,3,0,3,0,3,800" :
                it == 361 ? "0,0,3,5,6,0,0,0,3,3,3,0,800" :
                it == 362 ? "0,0,3,0,6,0,0,0,2,0,2,0,800" :
                it == 363 ? "0,0,3,0,0,0,0,0,1,0,0,0,800" :
                it == 364 ? "1,2,3,5,6,7,6,6,6,6,6,6,800" :
                it == 365 ? "1,2,3,5,0,0,4,4,4,4,0,0,800" :
                it == 366 ? "0,0,3,5,0,0,0,0,2,2,0,0,800" :
                it == 367 ? "0,2,0,0,0,0,0,1,0,0,0,0,800" :
                it == 368 ? "1,0,0,0,0,0,1,0,0,0,0,0,800" :
                it == 369 ? "0,0,0,5,6,0,0,0,0,2,2,0,800" :
                it == 370 ? "0,2,0,5,0,0,0,2,0,2,0,0,800" :
                it == 371 ? "1,0,0,0,6,0,2,0,0,0,2,0,800" :
                it == 372 ? "0,0,3,5,6,7,0,0,4,4,4,4,800" :
                it == 373 ? "1,2,3,5,6,0,5,5,5,5,5,0,800" :
                it == 374 ? "1,2,0,5,6,7,5,5,0,5,5,5,800" :
                it == 375 ? "0,2,0,0,0,7,0,2,0,0,0,2,800" :
                it == 376 ? "0,2,3,0,0,0,0,2,2,0,0,0,800" :
                it == 377 ? "1,0,0,5,6,0,3,0,0,3,3,0,800" :
                it == 378 ? "0,0,0,0,6,0,0,0,0,0,1,0,800" :
                it == 379 ? "1,0,0,5,6,7,4,0,0,4,4,4,800" :
                it == 380 ? "0,2,3,5,6,7,0,5,5,5,5,5,800" :
                it == 381 ? "0,2,3,5,6,0,0,4,4,4,4,0,800" :
                it == 382 ? "0,0,0,5,6,7,0,0,0,3,3,3,800" :
                it == 383 ? "1,2,0,5,0,0,3,3,0,3,0,0,800" :
                it == 384 ? "1,2,3,0,0,7,4,4,4,0,0,4,800" :
                it == 385 ? "0,2,0,5,0,0,0,2,0,2,0,0,800" :
                it == 386 ? "0,0,3,5,0,0,0,0,2,2,0,0,800" :
                it == 387 ? "0,2,0,5,0,7,0,3,0,3,0,3,800" :
                it == 388 ? "0,2,0,5,6,7,0,4,0,4,4,4,800" :
                it == 389 ? "1,0,3,0,6,0,3,0,3,0,3,0,800" :
                it == 390 ? "1,2,0,0,0,0,2,2,0,0,0,0,800" :
                it == 391 ? "1,2,3,0,6,0,4,4,4,0,4,0,800" :
                it == 392 ? "1,0,0,0,0,7,2,0,0,0,0,2,800" :
                it == 393 ? "1,2,0,5,6,0,4,4,0,4,4,0,800" :
                it == 394 ? "0,0,0,0,6,7,0,0,0,0,2,2,800" :
                it == 395 ? "1,0,3,5,6,0,4,0,4,4,4,0,800" :
                it == 396 ? "1,2,0,5,0,7,4,4,0,4,0,4,800" :
                it == 397 ? "0,2,3,5,0,7,0,4,4,4,0,4,800" :
                it == 398 ? "0,0,3,5,0,7,0,0,3,3,0,3,800" :
                it == 399 ? "0,2,3,5,6,0,0,4,4,4,4,0,800" :
                it == 400 ? "1,0,0,0,0,0,1,0,0,0,0,0,800" :
                it == 401 ? "0,2,0,0,6,7,0,3,0,0,3,3,800" :
                it == 402 ? "1,2,0,0,0,7,3,3,0,0,0,3,800" :
                it == 403 ? "0,2,3,0,6,7,0,4,4,0,4,4,800" :
                it == 404 ? "0,0,3,5,6,0,0,0,3,3,3,0,800" :
                it == 405 ? "1,2,3,5,0,0,4,4,4,4,0,0,800" :
                it == 406 ? "0,2,0,0,6,0,0,2,0,0,2,0,800" :
                it == 407 ? "1,2,3,0,0,7,4,4,4,0,0,4,800" :
                it == 408 ? "1,0,3,0,6,7,4,0,4,0,4,4,800" :
                it == 409 ? "1,0,3,0,0,7,3,0,3,0,0,3,800" :
                it == 410 ? "1,2,0,5,6,7,5,5,0,5,5,5,800" :
                it == 411 ? "0,0,0,5,0,7,0,0,0,2,0,2,800" :
                it == 412 ? "0,0,0,5,6,7,0,0,0,3,3,3,800" :
                it == 413 ? "1,0,3,5,0,0,3,0,3,3,0,0,800" :
                it == 414 ? "0,0,0,5,0,0,0,0,0,1,0,0,800" :
                it == 415 ? "1,2,0,5,0,0,3,3,0,3,0,0,800" :
                it == 416 ? "0,2,3,5,0,0,0,3,3,3,0,0,800" :
                it == 417 ? "0,2,0,0,0,7,0,2,0,0,0,2,800" :
                it == 418 ? "1,0,0,5,6,7,4,0,0,4,4,4,800" :
                it == 419 ? "0,0,0,5,6,0,0,0,0,2,2,0,800" :
                it == 420 ? "0,0,0,0,0,7,0,0,0,0,0,1,800" :
                it == 421 ? "0,2,3,0,0,0,0,2,2,0,0,0,800" :
                it == 422 ? "1,0,0,5,0,7,3,0,0,3,0,3,800" :
                it == 423 ? "1,2,0,0,6,0,3,3,0,0,3,0,800" :
                it == 424 ? "1,2,3,0,0,0,3,3,3,0,0,0,800" :
                it == 425 ? "1,0,3,5,6,7,5,0,5,5,5,5,800" :
                it == 426 ? "1,0,0,5,0,0,2,0,0,2,0,0,800" :
                it == 427 ? "1,0,3,5,0,7,4,0,4,4,0,4,800" :
                it == 428 ? "0,2,3,5,6,7,0,5,5,5,5,5,800" :
                it == 429 ? "0,2,0,0,0,0,0,1,0,0,0,0,800" :
                it == 430 ? "1,0,0,5,6,0,3,0,0,3,3,0,800" :
                it == 431 ? "1,2,3,5,6,7,6,6,6,6,6,6,800" :
                it == 432 ? "0,2,3,0,6,0,0,3,3,0,3,0,800" :
                it == 433 ? "0,0,3,5,6,7,0,0,4,4,4,4,800" :
                it == 434 ? "1,2,3,5,0,7,5,5,5,5,0,5,800" :
                it == 435 ? "0,0,0,0,0,0,0,0,0,0,0,0,900" :
                it == 436 ? "0,2,0,5,6,0,0,3,0,3,3,0,800" :
                it == 437 ? "0,0,0,0,6,0,0,0,0,0,1,0,800" :
                it == 438 ? "1,2,3,5,6,0,5,5,5,5,5,0,800" :
                it == 439 ? "1,2,0,0,6,7,4,4,0,0,4,4,800" :
                it == 440 ? "1,0,0,0,6,7,3,0,0,0,3,3,800" :
                it == 441 ? "1,0,3,0,0,0,2,0,2,0,0,0,800" :
                it == 442 ? "1,2,3,0,6,7,5,5,5,0,5,5,800" :
                it == 443 ? "0,2,3,0,0,7,0,3,3,0,0,3,800" :
                it == 444 ? "0,0,3,0,0,0,0,0,1,0,0,0,800" :
                it == 445 ? "0,0,3,0,6,0,0,0,2,0,2,0,800" :
                it == 446 ? "0,0,3,0,6,7,0,0,3,0,3,3,800" :
                it == 447 ? "0,0,3,0,0,7,0,0,2,0,0,2,800" :
                it == 448 ? "1,0,0,0,6,0,2,0,0,0,2,0,800" :
                it == 449 ? "1,0,3,5,0,0,3,0,3,3,0,0,800" :
                it == 450 ? "0,0,0,0,0,7,0,0,0,0,0,1,800" :
                it == 451 ? "0,0,0,5,0,0,0,0,0,1,0,0,800" :
                it == 452 ? "1,2,3,0,0,7,4,4,4,0,0,4,800" :
                it == 453 ? "0,2,0,5,6,0,0,3,0,3,3,0,800" :
                it == 454 ? "1,2,3,0,6,0,4,4,4,0,4,0,800" :
                it == 455 ? "0,2,3,5,6,0,0,4,4,4,4,0,800" :
                it == 456 ? "1,0,3,0,6,7,4,0,4,0,4,4,800" :
                it == 457 ? "0,2,3,0,6,7,0,4,4,0,4,4,800" :
                it == 458 ? "0,0,3,5,6,0,0,0,3,3,3,0,800" :
                it == 459 ? "1,2,3,0,6,7,5,5,5,0,5,5,800" :
                it == 460 ? "1,2,0,5,6,7,5,5,0,5,5,5,800" :
                it == 461 ? "1,0,0,5,0,0,2,0,0,2,0,0,800" :
                it == 462 ? "0,2,0,5,0,0,0,2,0,2,0,0,800" :
                it == 463 ? "1,2,0,5,0,0,3,3,0,3,0,0,800" :
                it == 464 ? "0,0,3,0,0,7,0,0,2,0,0,2,800" :
                it == 465 ? "1,2,0,5,0,7,4,4,0,4,0,4,800" :
                it == 466 ? "0,0,3,0,6,7,0,0,3,0,3,3,800" :
                it == 467 ? "0,0,0,0,0,0,0,0,0,0,0,0,900" :
                it == 468 ? "1,0,3,5,0,7,4,0,4,4,0,4,800" :
                it == 469 ? "0,0,0,0,6,0,0,0,0,0,1,0,800" :
                it == 470 ? "1,2,0,0,6,0,3,3,0,0,3,0,800" :
                it == 471 ? "1,2,0,5,6,0,4,4,0,4,4,0,800" :
                it == 472 ? "0,0,0,5,6,0,0,0,0,2,2,0,800" :
                it == 473 ? "1,0,3,0,0,0,2,0,2,0,0,0,800" :
                it == 474 ? "1,2,0,0,0,0,2,2,0,0,0,0,800" :
                it == 475 ? "0,2,0,0,0,7,0,2,0,0,0,2,800" :
                it == 476 ? "1,0,3,5,6,7,5,0,5,5,5,5,800" :
                it == 477 ? "0,2,0,0,6,0,0,2,0,0,2,0,800" :
                it == 478 ? "0,0,0,5,6,7,0,0,0,3,3,3,800" :
                it == 479 ? "0,2,3,5,0,7,0,4,4,4,0,4,800" :
                it == 480 ? "0,0,0,5,0,7,0,0,0,2,0,2,800" :
                it == 481 ? "1,0,3,0,6,0,3,0,3,0,3,0,800" :
                it == 482 ? "1,2,3,0,0,0,3,3,3,0,0,0,800" :
                it == 483 ? "1,0,0,5,6,7,4,0,0,4,4,4,800" :
                it == 484 ? "0,0,3,5,0,7,0,0,3,3,0,3,800" :
                it == 485 ? "1,0,3,0,0,7,3,0,3,0,0,3,800" :
                it == 486 ? "0,0,3,0,0,0,0,0,1,0,0,0,800" :
                it == 487 ? "0,0,3,5,0,0,0,0,2,2,0,0,800" :
                it == 488 ? "0,0,3,0,6,0,0,0,2,0,2,0,800" :
                it == 489 ? "1,2,3,5,0,0,4,4,4,4,0,0,800" :
                it == 490 ? "0,2,3,5,0,0,0,3,3,3,0,0,800" :
                it == 491 ? "1,0,3,5,6,0,4,0,4,4,4,0,800" :
                it == 492 ? "0,2,3,5,6,7,0,5,5,5,5,5,800" :
                it == 493 ? "1,0,0,0,6,7,3,0,0,0,3,3,800" :
                it == 494 ? "0,2,3,0,0,0,0,2,2,0,0,0,800" :
                it == 495 ? "0,2,0,5,6,7,0,4,0,4,4,4,800" :
                it == 496 ? "1,2,3,5,0,7,5,5,5,5,0,5,800" :
                it == 497 ? "0,0,3,5,6,7,0,0,4,4,4,4,800" :
                it == 498 ? "1,0,0,5,0,7,3,0,0,3,0,3,800" :
                it == 499 ? "1,2,3,5,6,0,5,5,5,5,5,0,800" :
                it == 500 ? "0,2,0,0,6,7,0,3,0,0,3,3,800" :
                it == 501 ? "0,2,0,0,0,0,0,1,0,0,0,0,800" :
                it == 502 ? "0,0,0,0,6,7,0,0,0,0,2,2,800" :
                it == 503 ? "0,2,3,0,0,7,0,3,3,0,0,3,800" :
                it == 504 ? "1,2,3,5,6,7,6,6,6,6,6,6,800" :
                it == 505 ? "1,2,0,0,0,7,3,3,0,0,0,3,800" :
                it == 506 ? "1,0,0,0,0,7,2,0,0,0,0,2,800" :
                it == 507 ? "1,0,0,5,6,0,3,0,0,3,3,0,800" :
                it == 508 ? "1,2,0,0,6,7,4,4,0,0,4,4,800" :
                it == 509 ? "1,0,0,0,0,0,1,0,0,0,0,0,800" :
                it == 510 ? "0,2,0,5,0,7,0,3,0,3,0,3,800" :
                it == 511 ? "1,0,0,0,6,0,2,0,0,0,2,0,800" :
                it == 512 ? "0,2,3,0,6,0,0,3,3,0,3,0,800" :
                it == 513 ? "1,2,0,5,0,7,4,4,0,4,0,4,800" :
                it == 514 ? "0,2,0,0,0,7,0,2,0,0,0,2,800" :
                it == 515 ? "0,0,3,5,6,7,0,0,4,4,4,4,800" :
                it == 516 ? "1,0,3,0,6,0,3,0,3,0,3,0,800" :
                it == 517 ? "0,0,3,0,6,7,0,0,3,0,3,3,800" :
                it == 518 ? "1,0,0,5,6,0,3,0,0,3,3,0,800" :
                it == 519 ? "1,2,3,5,0,7,5,5,5,5,0,5,800" :
                it == 520 ? "0,2,0,5,0,0,0,2,0,2,0,0,800" :
                it == 521 ? "0,0,0,0,6,7,0,0,0,0,2,2,800" :
                it == 522 ? "0,0,3,0,0,0,0,0,1,0,0,0,800" :
                it == 523 ? "1,2,3,5,0,0,4,4,4,4,0,0,800" :
                it == 524 ? "1,0,3,5,0,7,4,0,4,4,0,4,800" :
                it == 525 ? "0,0,3,5,0,0,0,0,2,2,0,0,800" :
                it == 526 ? "1,0,0,5,0,0,2,0,0,2,0,0,800" :
                it == 527 ? "0,0,3,0,0,7,0,0,2,0,0,2,800" :
                it == 528 ? "0,2,3,5,6,0,0,4,4,4,4,0,800" :
                it == 529 ? "0,2,0,5,6,0,0,3,0,3,3,0,800" :
                it == 530 ? "0,2,3,5,0,7,0,4,4,4,0,4,800" :
                it == 531 ? "0,2,0,5,0,7,0,3,0,3,0,3,800" :
                it == 532 ? "1,0,3,0,0,0,2,0,2,0,0,0,800" :
                it == 533 ? "0,2,0,0,6,0,0,2,0,0,2,0,800" :
                it == 534 ? "0,0,0,0,0,0,0,0,0,0,0,0,900" :
                it == 535 ? "1,2,0,5,6,0,4,4,0,4,4,0,800" :
                it == 536 ? "1,0,0,0,0,7,2,0,0,0,0,2,800" :
                it == 537 ? "0,0,0,0,0,7,0,0,0,0,0,1,800" :
                it == 538 ? "0,2,3,0,0,7,0,3,3,0,0,3,800" :
                it == 539 ? "1,2,0,0,0,7,3,3,0,0,0,3,800" :
                it == 540 ? "0,0,0,5,6,0,0,0,0,2,2,0,800" :
                it == 541 ? "0,0,3,5,0,7,0,0,3,3,0,3,800" :
                it == 542 ? "0,0,0,5,0,7,0,0,0,2,0,2,800" :
                it == 543 ? "1,0,3,5,6,0,4,0,4,4,4,0,800" :
                it == 544 ? "1,2,3,5,6,0,5,5,5,5,5,0,800" :
                it == 545 ? "1,0,0,0,6,0,2,0,0,0,2,0,800" :
                it == 546 ? "0,0,0,0,6,0,0,0,0,0,1,0,800" :
                it == 547 ? "1,2,0,5,0,0,3,3,0,3,0,0,800" :
                it == 548 ? "0,0,0,5,6,7,0,0,0,3,3,3,800" :
                it == 549 ? "0,2,3,5,0,0,0,3,3,3,0,0,800" :
                it == 550 ? "0,0,3,5,6,0,0,0,3,3,3,0,800" :
                it == 551 ? "0,2,0,0,0,0,0,1,0,0,0,0,800" :
                it == 552 ? "0,2,0,5,6,7,0,4,0,4,4,4,800" :
                it == 553 ? "1,2,0,0,0,0,2,2,0,0,0,0,800" :
                it == 554 ? "1,2,3,0,6,0,4,4,4,0,4,0,800" :
                it == 555 ? "1,0,3,0,6,7,4,0,4,0,4,4,800" :
                it == 556 ? "0,2,3,5,6,7,0,5,5,5,5,5,800" :
                it == 557 ? "1,0,3,0,0,7,3,0,3,0,0,3,800" :
                it == 558 ? "1,2,0,5,6,7,5,5,0,5,5,5,800" :
                it == 559 ? "0,2,3,0,0,0,0,2,2,0,0,0,800" :
                it == 560 ? "0,2,3,0,6,7,0,4,4,0,4,4,800" :
                it == 561 ? "1,0,0,0,0,0,1,0,0,0,0,0,800" :
                it == 562 ? "1,2,3,5,6,7,6,6,6,6,6,6,800" :
                it == 563 ? "1,2,3,0,0,7,4,4,4,0,0,4,800" :
                it == 564 ? "0,2,0,0,6,7,0,3,0,0,3,3,800" :
                it == 565 ? "1,0,3,5,0,0,3,0,3,3,0,0,800" :
                it == 566 ? "1,2,0,0,6,7,4,4,0,0,4,4,800" :
                it == 567 ? "1,2,0,0,6,0,3,3,0,0,3,0,800" :
                it == 568 ? "1,0,0,0,6,7,3,0,0,0,3,3,800" :
                it == 569 ? "1,2,3,0,6,7,5,5,5,0,5,5,800" :
                it == 570 ? "1,2,3,0,0,0,3,3,3,0,0,0,800" :
                it == 571 ? "0,0,0,5,0,0,0,0,0,1,0,0,800" :
                it == 572 ? "1,0,3,5,6,7,5,0,5,5,5,5,800" :
                it == 573 ? "1,0,0,5,6,7,4,0,0,4,4,4,800" :
                it == 574 ? "0,0,3,0,6,0,0,0,2,0,2,0,800" :
                it == 575 ? "1,0,0,5,0,7,3,0,0,3,0,3,800" :
                it == 576 ? "0,2,3,0,6,0,0,3,3,0,3,0,800" :
                it == 577 ? "1,0,3,5,0,0,3,0,3,3,0,0,800" :
                it == 578 ? "0,2,0,5,6,0,0,3,0,3,3,0,800" :
                it == 579 ? "0,0,0,0,0,0,0,0,0,0,0,0,900" :
                it == 580 ? "1,2,0,0,0,0,2,2,0,0,0,0,800" :
                it == 581 ? "1,2,3,5,0,0,4,4,4,4,0,0,800" :
                it == 582 ? "1,0,0,5,6,0,3,0,0,3,3,0,800" :
                it == 583 ? "1,0,3,5,6,0,4,0,4,4,4,0,800" :
                it == 584 ? "0,2,3,5,6,0,0,4,4,4,4,0,800" :
                it == 585 ? "0,2,0,0,6,0,0,2,0,0,2,0,800" :
                it == 586 ? "0,0,0,0,0,7,0,0,0,0,0,1,800" :
                it == 587 ? "1,2,3,5,6,7,6,6,6,6,6,6,800" :
                it == 588 ? "0,0,3,5,6,7,0,0,4,4,4,4,800" :
                it == 589 ? "0,0,3,0,6,7,0,0,3,0,3,3,800" :
                it == 590 ? "0,0,0,0,6,0,0,0,0,0,1,0,800" :
                it == 591 ? "0,2,0,0,0,7,0,2,0,0,0,2,800" :
                it == 592 ? "0,2,0,5,6,7,0,4,0,4,4,4,800" :
                it == 593 ? "1,0,0,0,6,0,2,0,0,0,2,0,800" :
                it == 594 ? "0,0,0,5,0,0,0,0,0,1,0,0,800" :
                it == 595 ? "0,0,0,5,6,0,0,0,0,2,2,0,800" :
                it == 596 ? "1,2,0,5,6,7,5,5,0,5,5,5,800" :
                it == 597 ? "1,2,0,0,6,7,4,4,0,0,4,4,800" :
                it == 598 ? "1,2,0,5,6,0,4,4,0,4,4,0,800" :
                it == 599 ? "1,2,3,0,0,0,3,3,3,0,0,0,800" :
                it == 600 ? "1,2,0,5,0,0,3,3,0,3,0,0,800" :
                it == 601 ? "0,0,0,5,6,7,0,0,0,3,3,3,800" :
                it == 602 ? "0,0,3,5,0,7,0,0,3,3,0,3,800" :
                it == 603 ? "0,2,3,5,0,7,0,4,4,4,0,4,800" :
                it == 604 ? "0,0,3,5,6,0,0,0,3,3,3,0,800" :
                it == 605 ? "0,2,3,0,0,0,0,2,2,0,0,0,800" :
                it == 606 ? "0,2,3,5,0,0,0,3,3,3,0,0,800" :
                it == 607 ? "1,2,3,0,6,0,4,4,4,0,4,0,800" :
                it == 608 ? "0,0,3,5,0,0,0,0,2,2,0,0,800" :
                it == 609 ? "1,0,3,5,6,7,5,0,5,5,5,5,800" :
                it == 610 ? "1,0,0,5,6,7,4,0,0,4,4,4,800" :
                it == 611 ? "0,2,0,5,0,7,0,3,0,3,0,3,800" :
                it == 612 ? "0,0,3,0,0,0,0,0,1,0,0,0,800" :
                it == 613 ? "0,2,3,5,6,7,0,5,5,5,5,5,800" :
                it == 614 ? "0,2,3,0,6,0,0,3,3,0,3,0,800" :
                it == 615 ? "1,0,0,0,0,0,1,0,0,0,0,0,800" :
                it == 616 ? "1,0,3,0,0,7,3,0,3,0,0,3,800" :
                it == 617 ? "1,2,0,0,6,0,3,3,0,0,3,0,800" :
                it == 618 ? "1,2,3,5,6,0,5,5,5,5,5,0,800" :
                it == 619 ? "1,2,0,0,0,7,3,3,0,0,0,3,800" :
                it == 620 ? "1,0,3,0,6,0,3,0,3,0,3,0,800" :
                it == 621 ? "0,0,0,5,0,7,0,0,0,2,0,2,800" :
                it == 622 ? "1,0,0,5,0,0,2,0,0,2,0,0,800" :
                it == 623 ? "0,2,0,0,6,7,0,3,0,0,3,3,800" :
                it == 624 ? "1,0,3,5,0,7,4,0,4,4,0,4,800" :
                it == 625 ? "0,2,3,0,6,7,0,4,4,0,4,4,800" :
                it == 626 ? "1,2,3,0,0,7,4,4,4,0,0,4,800" :
                it == 627 ? "1,2,3,0,6,7,5,5,5,0,5,5,800" :
                it == 628 ? "1,2,0,5,0,7,4,4,0,4,0,4,800" :
                it == 629 ? "1,0,3,0,0,0,2,0,2,0,0,0,800" :
                it == 630 ? "0,2,0,5,0,0,0,2,0,2,0,0,800" :
                it == 631 ? "0,2,3,0,0,7,0,3,3,0,0,3,800" :
                it == 632 ? "1,0,0,5,0,7,3,0,0,3,0,3,800" :
                it == 633 ? "1,2,3,5,0,7,5,5,5,5,0,5,800" :
                it == 634 ? "0,0,0,0,6,7,0,0,0,0,2,2,800" :
                it == 635 ? "0,0,3,0,6,0,0,0,2,0,2,0,800" :
                it == 636 ? "1,0,3,0,6,7,4,0,4,0,4,4,800" :
                it == 637 ? "0,2,0,0,0,0,0,1,0,0,0,0,800" :
                it == 638 ? "1,0,0,0,6,7,3,0,0,0,3,3,800" :
                it == 639 ? "0,0,3,0,0,7,0,0,2,0,0,2,800" :
                it == 640 ? "1,0,0,0,0,7,2,0,0,0,0,2,800" :
                "0,0,0,0,0,0,0,0,0,0,0,0,900"
            -> Parse(Pattern="%i,%i,%i,%i,%i,%i,%i,%i", Separator="") => #3
            ExternalizedMapping("charge time", EndV0Delay) => #4
            #3, #4 -> GroupWorkflow stim_main_all64mix
                WorkflowInput Source1 => #0
                ExternalizedMapping("charge time", EndV0Delay) => #1
                #0, #1 -> SelectMany StimBlockOdor
                    WorkflowInput Source1
                    -> SelectMany "Adjust carry"
                        WorkflowInput Source1 => #0
                        -> MemberSelector(Selector=Item7) => #1
                        -> Bonsai.Scripting.Expressions.ExpressionCondition
                          Expression: it > 0
                        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel4TargetFlowPayload(Channel4TargetFlow=800))
                        -> MulticastSubject Olfactometer1Commands => #4
                        #1 -> Bonsai.Scripting.Expressions.ExpressionCondition
                          Expression: it == 0
                        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannel4TargetFlowPayload(Channel4TargetFlow=900))
                        -> MulticastSubject Olfactometer1Commands => #7
                        Source1=#4, Source7=#7 -> Merge => #8
                        #0, #8 -> Sample
                        -> WorkflowOutput
                    -> SelectMany "Adjust odor rate"
                        WorkflowInput Source1 => #0
                        -> MemberSelector(Selector=Item7) => #1
                        -> Bonsai.Scripting.Expressions.ExpressionCondition
                          Expression: it > 0
                        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                          Expression: double(100.0 / it)
                        -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.Channel0TargetFlow)
                        -> MulticastSubject Olfactometer1Commands => #5
                        #3 -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.Channel1TargetFlow)
                        -> MulticastSubject Olfactometer1Commands => #7
                        #3 -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.Channel2TargetFlow)
                        -> MulticastSubject Olfactometer1Commands => #9
                        #3 -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.Channel0TargetFlow)
                        -> MulticastSubject Olfactometer2Commands => #11
                        #3 -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.Channel1TargetFlow)
                        -> MulticastSubject Olfactometer2Commands => #13
                        #3 -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.Channel2TargetFlow)
                        -> MulticastSubject Olfactometer2Commands => #15
                        #1 -> Bonsai.Scripting.Expressions.ExpressionCondition
                          Expression: it == 0
                        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannelsTargetFlowPayload(Channel0=0, Channel1=0, Channel2=0, Channel3=0, Channel4=900))
                        -> MulticastSubject Olfactometer1Commands
                        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannelsTargetFlowPayload(Channel0=0, Channel1=0, Channel2=0, Channel3=0, Channel4=0))
                        -> MulticastSubject Olfactometer2Commands => #20
                        #5, #7, #9, #11, #13, #15, #20 -> Merge => #21
                        ExternalizedMapping(DueTime) => #22
                        #21, #22 -> Delay(DueTime=PT1S) => #23
                        #0, #23 -> Sample
                        -> WorkflowOutput
                    -> SelectMany Odor_set6 => #3
                        WorkflowInput Source1 => #0
                        -> MemberSelector(Selector=Item1)
                        -> IncludeWorkflow(Path=Extensions\open_OC.bonsai) => #2
                        #0 -> MemberSelector(Selector=Item2)
                        -> IncludeWorkflow(Path=Extensions\open_OC.bonsai) => #4
                        #0 -> MemberSelector(Selector=Item3)
                        -> IncludeWorkflow(Path=Extensions\open_OC.bonsai) => #6
                        #0 -> MemberSelector(Selector=Item4)
                        -> IncludeWorkflow(Path=Extensions\open_OC.bonsai) => #8
                        #0 -> MemberSelector(Selector=Item5)
                        -> IncludeWorkflow(Path=Extensions\open_OC.bonsai) => #10
                        #0 -> MemberSelector(Selector=Item6)
                        -> IncludeWorkflow(Path=Extensions\open_OC.bonsai) => #12
                        #2, #4, #6, #8, #10, #12 -> Merge => #13
                        #0, #13 -> Sample
                        -> WorkflowOutput
                    ExternalizedMapping("charge time") => #4
                    #3, #4 -> SelectMany digital1_high
                        WorkflowInput Source1
                        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputSetPayload(DigitalOutputSet=DO1)) => #1
                        ExternalizedMapping(Name) => #2
                        #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                        ExternalizedMapping(DueTime(DisplayName="charge time")) => #4
                        #3, #4 -> Delay(DueTime=PT25S)
                        -> WorkflowOutput
                    -> SelectMany digital1_low
                        WorkflowInput Source1
                        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputClearPayload(DigitalOutputClear=DO1)) => #1
                        ExternalizedMapping(Name) => #2
                        #1, #2 -> MulticastSubject Olfactometer1Commands
                        -> WorkflowOutput
                    -> SelectMany digital0_high => #7
                        WorkflowInput Source1
                        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputSetPayload(DigitalOutputSet=DO0)) => #1
                        ExternalizedMapping(Name) => #2
                        #1, #2 -> MulticastSubject Olfactometer1Commands
                        -> WorkflowOutput
                    ExternalizedMapping(EndV0Delay) => #8
                    #7, #8 -> SelectMany OpenEndValve0
                        WorkflowInput Source1
                        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateValveSetPayload(ValveSet=EndValve0)) => #1
                        ExternalizedMapping(Name) => #2
                        #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                        ExternalizedMapping(DueTime(DisplayName=EndV0Delay)) => #4
                        #3, #4 -> Delay(DueTime=PT4S)
                        -> WorkflowOutput
                    -> SelectMany CloseEndValve0
                        WorkflowInput Source1
                        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateValveClearPayload(ValveClear=EndValve0)) => #1
                        ExternalizedMapping(Name) => #2
                        #1, #2 -> MulticastSubject Olfactometer1Commands
                        -> WorkflowOutput
                    -> SelectMany digital0_low
                        WorkflowInput Source1
                        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputClearPayload(DigitalOutputClear=DO0)) => #1
                        ExternalizedMapping(Name) => #2
                        #1, #2 -> MulticastSubject Olfactometer1Commands
                        -> WorkflowOutput
                    -> SelectMany CloseOdor1Valve
                        WorkflowInput Source1
                        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateOdorValveStatePayload(OdorValveState=None)) => #1
                        ExternalizedMapping(Name) => #2
                        #1, #2 -> MulticastSubject Olfactometer1Commands
                        -> WorkflowOutput
                    -> SelectMany CloseOdor2Valve
                        WorkflowInput Source1
                        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateOdorValveStatePayload(OdorValveState=None)) => #1
                        ExternalizedMapping(Name) => #2
                        #1, #2 -> MulticastSubject Olfactometer2Commands
                        -> WorkflowOutput
                    -> SelectMany CloseCheck1Valve
                        WorkflowInput Source1
                        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateCheckValveStatePayload(CheckValveState=None)) => #1
                        ExternalizedMapping(Name) => #2
                        #1, #2 -> MulticastSubject Olfactometer1Commands
                        -> WorkflowOutput
                    -> SelectMany CloseCheck2Valve
                        WorkflowInput Source1
                        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateCheckValveStatePayload(CheckValveState=None)) => #1
                        ExternalizedMapping(Name) => #2
                        #1, #2 -> MulticastSubject Olfactometer2Commands
                        -> WorkflowOutput
                    -> WorkflowOutput

                    Disable MemberSelector(Selector=Item2)
                    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #18
                      Expression: int32(Math.Pow(2,it-1))
                    -> Disable Bonsai.Scripting.Expressions.ExpressionCondition => #19
                      Expression: it <= 8
                    Disable ExternalizedMapping(CheckDelay) => #20
                    Disable ExternalizedMapping(EndV0Delay) => #21
                    #19, #20, #21 -> Disable GroupWorkflow StimBlock1 => #22
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Name) => #1
                        #0, #1 -> SelectMany OpenOdorValve
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.OdorValveState) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        -> SelectMany digital1_high => #3
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputSetPayload(DigitalOutputSet=DO1)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        ExternalizedMapping(CheckDelay) => #4
                        #3, #1, #4 -> SelectMany OpenCheckValve
                            WorkflowInput Source1 => #0
                            -> LeftShift(Value=8)
                            -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.CheckValveState) => #2
                            ExternalizedMapping(Name) => #3
                            #2, #3 -> MulticastSubject Olfactometer1Commands => #4
                            ExternalizedMapping(DueTime(DisplayName=CheckDelay)) => #5
                            #4, #5 -> Delay(DueTime=PT25S) => #6
                            #0, #6 -> Sample
                            -> WorkflowOutput
                        -> SelectMany digital1_low
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputClearPayload(DigitalOutputClear=DO1)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        -> SelectMany digital0_high => #7
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputSetPayload(DigitalOutputSet=DO0)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        ExternalizedMapping(EndV0Delay) => #8
                        #7, #8 -> SelectMany OpenEndValve0
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateValveSetPayload(ValveSet=EndValve0)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            ExternalizedMapping(DueTime(DisplayName=EndV0Delay)) => #4
                            #3, #4 -> Delay(DueTime=PT4S) => #5
                            #0, #5 -> Sample
                            -> WorkflowOutput
                        -> SelectMany CloseEndValve0
                            WorkflowInput Source1
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateValveClearPayload(ValveClear=EndValve0)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands
                            -> WorkflowOutput
                        -> SelectMany digital0_low
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputClearPayload(DigitalOutputClear=DO0)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        -> SelectMany CloseOdorValve => #12
                            WorkflowInput Source1
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateOdorValveStatePayload(OdorValveState=None)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands
                            -> WorkflowOutput
                        #12, #1 -> SelectMany CloseCheckValve
                            WorkflowInput Source1
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateCheckValveStatePayload(CheckValveState=None)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands
                            -> WorkflowOutput
                        -> WorkflowOutput
                    #18 -> Disable Bonsai.Scripting.Expressions.ExpressionCondition
                      Expression: it > 8
                    -> Disable RightShift(Value=4) => #24
                    #24, #21, #20 -> Disable GroupWorkflow StimBlock2 => #25
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Name) => #1
                        #0, #1 -> SelectMany OpenOdorValve
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.OdorValveState) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer2Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        -> SelectMany digital1_high => #3
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputSetPayload(DigitalOutputSet=DO1)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        ExternalizedMapping(CheckDelay) => #4
                        #3, #1, #4 -> SelectMany OpenCheckValve
                            WorkflowInput Source1
                            -> LeftShift(Value=8)
                            -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.CheckValveState) => #2
                            ExternalizedMapping(Name) => #3
                            #2, #3 -> MulticastSubject Olfactometer2Commands => #4
                            ExternalizedMapping(DueTime(DisplayName=CheckDelay)) => #5
                            #4, #5 -> Delay(DueTime=PT25S)
                            -> WorkflowOutput
                        -> SelectMany digital1_low
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputClearPayload(DigitalOutputClear=DO1)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        -> SelectMany digital0_high => #7
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputSetPayload(DigitalOutputSet=DO0)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        ExternalizedMapping(EndV0Delay) => #8
                        #7, #8 -> SelectMany OpenEndValve0
                            WorkflowInput Source1
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateValveSetPayload(ValveSet=EndValve0)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            ExternalizedMapping(DueTime(DisplayName=EndV0Delay)) => #4
                            #3, #4 -> Delay(DueTime=PT4S)
                            -> WorkflowOutput
                        -> SelectMany CloseEndValve0
                            WorkflowInput Source1
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateValveClearPayload(ValveClear=EndValve0)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands
                            -> WorkflowOutput
                        -> SelectMany digital0_low
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputClearPayload(DigitalOutputClear=DO0)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer1Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        -> SelectMany CloseOdorValve => #12
                            WorkflowInput Source1 => #0
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateOdorValveStatePayload(OdorValveState=None)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer2Commands => #3
                            #0, #3 -> Sample
                            -> WorkflowOutput
                        #12, #1 -> SelectMany CloseCheckValve
                            WorkflowInput Source1
                            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateCheckValveStatePayload(CheckValveState=None)) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Olfactometer2Commands
                            -> WorkflowOutput
                        -> WorkflowOutput
                    #22, #25 -> Disable Merge

                    Disable GroupWorkflow "initialize odor"
                        WorkflowInput Source1
                        -> SelectMany Odor1Set
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Selector) => #1
                            #0, #1 -> MemberSelector(Selector=Item1)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                              Expression: int32(Math.Pow(2,it-1))
                            -> Bonsai.Scripting.Expressions.ExpressionCondition
                              Expression: it > 8
                            -> RightShift(Value=4)
                            -> GroupWorkflow StimBlock2 => #6
                                WorkflowInput Source1
                                -> SelectMany OpenOdorValve
                                    WorkflowInput Source1 => #0
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer2Commands => #2
                                    #0, #2 -> Sample
                                    -> WorkflowOutput
                                -> SelectMany OpenCheckValve
                                    WorkflowInput Source1 => #0
                                    -> LeftShift(Value=8)
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer2Commands => #3
                                    #0, #3 -> Sample
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #3 -> Bonsai.Scripting.Expressions.ExpressionCondition
                              Expression: it > 0 && it <= 8
                            -> GroupWorkflow StimBlock1 => #8
                                WorkflowInput Source1
                                -> SelectMany OpenOdorValve
                                    WorkflowInput Source1 => #0
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer1Commands => #2
                                    #0, #2 -> Sample
                                    -> WorkflowOutput
                                -> SelectMany OpenCheckValve
                                    WorkflowInput Source1 => #0
                                    -> LeftShift(Value=8)
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer1Commands => #3
                                    #0, #3 -> Sample
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #3 -> Bonsai.Scripting.Expressions.ExpressionCondition => #9
                              Expression: it == 0
                            #6, #8, #9 -> Merge => #10
                            #0, #10 -> Sample
                            -> WorkflowOutput
                        -> SelectMany Odor2Set
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Selector) => #1
                            #0, #1 -> MemberSelector(Selector=Item2)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                              Expression: int32(Math.Pow(2,it-1))
                            -> Bonsai.Scripting.Expressions.ExpressionCondition
                              Expression: it > 8
                            -> RightShift(Value=4)
                            -> GroupWorkflow StimBlock2 => #6
                                WorkflowInput Source1
                                -> SelectMany OpenOdorValve
                                    WorkflowInput Source1 => #0
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer2Commands => #2
                                    #0, #2 -> Sample
                                    -> WorkflowOutput
                                -> SelectMany OpenCheckValve
                                    WorkflowInput Source1 => #0
                                    -> LeftShift(Value=8)
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer2Commands => #3
                                    #0, #3 -> Sample
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #3 -> Bonsai.Scripting.Expressions.ExpressionCondition
                              Expression: it > 0 && it <= 8
                            -> GroupWorkflow StimBlock1 => #8
                                WorkflowInput Source1
                                -> SelectMany OpenOdorValve
                                    WorkflowInput Source1 => #0
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer1Commands => #2
                                    #0, #2 -> Sample
                                    -> WorkflowOutput
                                -> SelectMany OpenCheckValve
                                    WorkflowInput Source1 => #0
                                    -> LeftShift(Value=8)
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer1Commands => #3
                                    #0, #3 -> Sample
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #3 -> Bonsai.Scripting.Expressions.ExpressionCondition => #9
                              Expression: it == 0
                            #6, #8, #9 -> Merge => #10
                            #0, #10 -> Sample
                            -> WorkflowOutput
                        -> SelectMany Odor3Set
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Selector) => #1
                            #0, #1 -> MemberSelector(Selector=Item3)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                              Expression: int32(Math.Pow(2,it-1))
                            -> Bonsai.Scripting.Expressions.ExpressionCondition
                              Expression: it > 8
                            -> RightShift(Value=4)
                            -> GroupWorkflow StimBlock2 => #6
                                WorkflowInput Source1
                                -> SelectMany OpenOdorValve
                                    WorkflowInput Source1 => #0
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer2Commands => #2
                                    #0, #2 -> Sample
                                    -> WorkflowOutput
                                -> SelectMany OpenCheckValve
                                    WorkflowInput Source1 => #0
                                    -> LeftShift(Value=8)
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer2Commands => #3
                                    #0, #3 -> Sample
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #3 -> Bonsai.Scripting.Expressions.ExpressionCondition
                              Expression: it > 0 && it <= 8
                            -> GroupWorkflow StimBlock1 => #8
                                WorkflowInput Source1
                                -> SelectMany OpenOdorValve
                                    WorkflowInput Source1 => #0
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer1Commands => #2
                                    #0, #2 -> Sample
                                    -> WorkflowOutput
                                -> SelectMany OpenCheckValve
                                    WorkflowInput Source1 => #0
                                    -> LeftShift(Value=8)
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer1Commands => #3
                                    #0, #3 -> Sample
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #3 -> Bonsai.Scripting.Expressions.ExpressionCondition => #9
                              Expression: it == 0
                            #6, #8, #9 -> Merge => #10
                            #0, #10 -> Sample
                            -> WorkflowOutput
                        -> SelectMany Odor4Set
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Selector) => #1
                            #0, #1 -> MemberSelector(Selector=Item4)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                              Expression: int32(Math.Pow(2,it-1))
                            -> Bonsai.Scripting.Expressions.ExpressionCondition
                              Expression: it > 8
                            -> RightShift(Value=4)
                            -> GroupWorkflow StimBlock2 => #6
                                WorkflowInput Source1
                                -> SelectMany OpenOdorValve
                                    WorkflowInput Source1 => #0
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer2Commands => #2
                                    #0, #2 -> Sample
                                    -> WorkflowOutput
                                -> SelectMany OpenCheckValve
                                    WorkflowInput Source1 => #0
                                    -> LeftShift(Value=8)
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer2Commands => #3
                                    #0, #3 -> Sample
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #3 -> Bonsai.Scripting.Expressions.ExpressionCondition
                              Expression: it > 0 && it <= 8
                            -> GroupWorkflow StimBlock1 => #8
                                WorkflowInput Source1
                                -> SelectMany OpenOdorValve
                                    WorkflowInput Source1 => #0
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer1Commands => #2
                                    #0, #2 -> Sample
                                    -> WorkflowOutput
                                -> SelectMany OpenCheckValve
                                    WorkflowInput Source1 => #0
                                    -> LeftShift(Value=8)
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer1Commands => #3
                                    #0, #3 -> Sample
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #3 -> Bonsai.Scripting.Expressions.ExpressionCondition => #9
                              Expression: it == 0
                            #6, #8, #9 -> Merge => #10
                            #0, #10 -> Sample
                            -> WorkflowOutput
                        -> SelectMany Odor5Set
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Selector) => #1
                            #0, #1 -> MemberSelector(Selector=Item5)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                              Expression: int32(Math.Pow(2,it-1))
                            -> Bonsai.Scripting.Expressions.ExpressionCondition
                              Expression: it > 8
                            -> RightShift(Value=4)
                            -> GroupWorkflow StimBlock2 => #6
                                WorkflowInput Source1
                                -> SelectMany OpenOdorValve
                                    WorkflowInput Source1 => #0
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer2Commands => #2
                                    #0, #2 -> Sample
                                    -> WorkflowOutput
                                -> SelectMany OpenCheckValve
                                    WorkflowInput Source1 => #0
                                    -> LeftShift(Value=8)
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer2Commands => #3
                                    #0, #3 -> Sample
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #3 -> Bonsai.Scripting.Expressions.ExpressionCondition
                              Expression: it > 0 && it <= 8
                            -> GroupWorkflow StimBlock1 => #8
                                WorkflowInput Source1
                                -> SelectMany OpenOdorValve
                                    WorkflowInput Source1 => #0
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer1Commands => #2
                                    #0, #2 -> Sample
                                    -> WorkflowOutput
                                -> SelectMany OpenCheckValve
                                    WorkflowInput Source1 => #0
                                    -> LeftShift(Value=8)
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer1Commands => #3
                                    #0, #3 -> Sample
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #3 -> Bonsai.Scripting.Expressions.ExpressionCondition => #9
                              Expression: it == 0
                            #6, #8, #9 -> Merge => #10
                            #0, #10 -> Sample
                            -> WorkflowOutput
                        -> SelectMany Odor6Set
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Selector) => #1
                            #0, #1 -> MemberSelector(Selector=Item6)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
                              Expression: int32(Math.Pow(2,it-1))
                            -> Bonsai.Scripting.Expressions.ExpressionCondition
                              Expression: it > 8
                            -> RightShift(Value=4)
                            -> GroupWorkflow StimBlock2 => #6
                                WorkflowInput Source1
                                -> SelectMany OpenOdorValve
                                    WorkflowInput Source1 => #0
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer2Commands => #2
                                    #0, #2 -> Sample
                                    -> WorkflowOutput
                                -> SelectMany OpenCheckValve
                                    WorkflowInput Source1 => #0
                                    -> LeftShift(Value=8)
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer2Commands => #3
                                    #0, #3 -> Sample
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #3 -> Bonsai.Scripting.Expressions.ExpressionCondition
                              Expression: it > 0 && it <= 8
                            -> GroupWorkflow StimBlock1 => #8
                                WorkflowInput Source1
                                -> SelectMany OpenOdorValve
                                    WorkflowInput Source1 => #0
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer1Commands => #2
                                    #0, #2 -> Sample
                                    -> WorkflowOutput
                                -> SelectMany OpenCheckValve
                                    WorkflowInput Source1 => #0
                                    -> LeftShift(Value=8)
                                    -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.ValveSet)
                                    -> MulticastSubject Olfactometer1Commands => #3
                                    #0, #3 -> Sample
                                    -> WorkflowOutput
                                -> WorkflowOutput
                            #3 -> Bonsai.Scripting.Expressions.ExpressionCondition => #9
                              Expression: it == 0
                            #6, #8, #9 -> Merge => #10
                            #0, #10 -> Sample
                            -> WorkflowOutput
                        -> WorkflowOutput
                -> WorkflowOutput
            -> WorkflowOutput
        Disable Timer(DueTime=PT0S) => #3
        Defer ITI => #4
            SubscribeSubject randITI
            -> Bonsai.Numerics.Distributions.Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT44.155S)
            -> WorkflowOutput
        #2, #3, #4 -> SubscribeWhen
        -> WorkflowOutput
    -> Concat => #4
    ExternalizedMapping(Filter(DisplayName=Start_experiment))
    -> Bonsai.Windows.Input.KeyDown(Filter="Space Shift", SuppressRepetitions=false) => #6
    ExternalizedMapping(Address(DisplayName=webhook)) => #7
    #6, #7 -> Aeon.Acquisition.SendMessageCard(Address="") => #8
    ExternalizedMapping(DueTime(DisplayName=time_before_odor)) => #9
    #8, #9 -> Delay(DueTime=PT1H) => #10
    #10, #7 -> Aeon.Acquisition.SendMessageCard(Address="") => #11
    #4, #11 -> SubscribeWhen
    -> TakeLast(Count=1) => #13
    #13, #7 -> Aeon.Acquisition.SendMessageCard(Address="")

    Bonsai.Numerics.CreateRandom(Seed=nil) => #15
    -> Disable Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=25)
    -> Disable AsyncSubject rand1to25
    ExternalizedMapping(Lower(DisplayName="ISI_low (s)"), Upper(DisplayName="ISI_high (s)")) => #18
    #15, #18 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=8)
    -> AsyncSubject randITI

GroupWorkflow Logging => #3
    ExternalizedMapping(Value(DisplayName=Path))
    -> PropertySource<Bonsai.IO.GetDirectories,System.String>(MemberName=Path, Value=.)
    -> BehaviorSubject DataRoot

    SubscribeSubject Olfactometer1Events => #3
    SubscribeSubject DataRoot
    -> Format(Format={0}/device1_test_dout, Selector="")
    -> PropertyMapping(Path) => #6
    #3, #6 -> Harp.Olfactometer.DeviceDataWriter(Path=device1_test_dout, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)

    SubscribeSubject Olfactometer2Events => #8
    SubscribeSubject DataRoot
    -> Format(Format={0}/device2_test_dout, Selector="")
    -> PropertyMapping(Path) => #11
    #8, #11 -> Harp.Olfactometer.DeviceDataWriter(Path=device2_test_dout, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)
SubscribeSubject Logging
-> BitwiseNot
-> Condition => #6
    WorkflowInput Source1
    -> WorkflowOutput
#3, #6 -> TakeUntil => #7
SubscribeSubject Logging
-> Condition => #9
    WorkflowInput Source1
    -> WorkflowOutput
#7, #9 -> SubscribeWhen

BooleanProperty(Value=false)
-> BehaviorSubject Logging

Bonsai.Gui.ButtonBuilder StopButton(Enabled=true, Visible=true, Text=Stop)
-> PublishSubject Stop
-> VisualizerMapping => #15
Timer(DueTime=PT0S)
-> BooleanProperty(Value=true)
-> PropertyMapping(Enabled) => #18
SubscribeSubject Logging
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> BitwiseNot
-> PropertyMapping(Enabled) => #22
#18, #22 -> Bonsai.Gui.ButtonBuilder LoggingButton(Enabled=true, Visible=true, Text=Logging)
-> Sink StartLogging
    WorkflowInput Source1
    -> BooleanProperty(Value=true)
    -> MulticastSubject Logging
    -> WorkflowOutput
-> VisualizerMapping => #25
#15, #25 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")

SubscribeSubject Stop
-> Take(Count=1)
-> GroupWorkflow Shutdown
    Disable WorkflowInput Source2
    -> Disable GroupWorkflow "PPS off"
        WorkflowInput Source1
        -> AllenNeuralDynamics.WhiteRabbit.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.WhiteRabbit.CreateAuxPortModePayload(AuxPortMode=Disabled))
        -> MulticastSubject HarpWhiteRabbitCommands
        -> WorkflowOutput
    -> Disable Delay(DueTime=PT1S)
    -> Disable GroupWorkflow StopLogging => #3
        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject Logging
        -> WorkflowOutput
    Disable ExternalizedMapping("Flush dur1", "Flush dur2") => #4
    #3, #4 -> Disable SelectMany Flush
        WorkflowInput Source1
        -> GroupWorkflow "Clear DO"
            WorkflowInput Source1
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputSetPayload(DigitalOutputSet=None))
            -> MulticastSubject Olfactometer1Commands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateDigitalOutputSetPayload(DigitalOutputSet=None))
            -> MulticastSubject Olfactometer1Commands
            -> WorkflowOutput
        -> GroupWorkflow "All odor off"
            WorkflowInput Source1
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateOdorValveStatePayload(OdorValveState=None))
            -> MulticastSubject Olfactometer1Commands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateOdorValveStatePayload(OdorValveState=None))
            -> MulticastSubject Olfactometer2Commands
            -> WorkflowOutput
        -> GroupWorkflow "flush device1"
            WorkflowInput Source1
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateCheckValveStatePayload(CheckValveState="CheckValve0 CheckValve1 CheckValve2 CheckValve3"))
            -> MulticastSubject Olfactometer1Commands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateValveSetPayload(ValveSet=EndValve1))
            -> MulticastSubject Olfactometer1Commands
            -> WorkflowOutput
        -> GroupWorkflow "open end0" => #4
            WorkflowInput Source1
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateValveSetPayload(ValveSet=EndValve0))
            -> MulticastSubject Olfactometer1Commands
            -> WorkflowOutput
        ExternalizedMapping(DueTime(DisplayName="Flush dur1")) => #5
        #4, #5 -> Delay(DueTime=PT30S)
        -> GroupWorkflow "devic1 check off"
            WorkflowInput Source1
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateCheckValveStatePayload(CheckValveState=None))
            -> MulticastSubject Olfactometer1Commands
            -> WorkflowOutput
        -> GroupWorkflow "flush device2"
            WorkflowInput Source1
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateCheckValveStatePayload(CheckValveState="CheckValve0 CheckValve1 CheckValve2 CheckValve3"))
            -> MulticastSubject Olfactometer2Commands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateValveClearPayload(ValveClear=EndValve1))
            -> MulticastSubject Olfactometer1Commands
            -> WorkflowOutput
        -> GroupWorkflow "open end0" => #9
            WorkflowInput Source1
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateValveSetPayload(ValveSet=EndValve0))
            -> MulticastSubject Olfactometer1Commands
            -> WorkflowOutput
        ExternalizedMapping(DueTime(DisplayName="Flush dur2")) => #10
        #9, #10 -> Delay(DueTime=PT30S)
        -> GroupWorkflow "clase all vavle"
            WorkflowInput Source1
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateValveStatePayload(ValveState=None))
            -> MulticastSubject Olfactometer1Commands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateValveStatePayload(ValveState=None))
            -> MulticastSubject Olfactometer2Commands
            -> WorkflowOutput
        -> GroupWorkflow "disable flow"
            WorkflowInput Source1
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled))
            -> MulticastSubject Olfactometer1Commands
            -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled))
            -> MulticastSubject Olfactometer2Commands
            -> WorkflowOutput
        -> WorkflowOutput
    -> Disable Take(Count=1)
    -> Disable WorkflowOutput

    WorkflowInput Source1
    -> GroupWorkflow "PPS off"
        WorkflowInput Source1
        -> AllenNeuralDynamics.WhiteRabbit.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.WhiteRabbit.CreateAuxPortModePayload(AuxPortMode=Disabled))
        -> MulticastSubject HarpWhiteRabbitCommands
        -> WorkflowOutput
    -> Delay(DueTime=PT1S)
    -> GroupWorkflow StopLogging
        WorkflowInput Source1
        -> BooleanProperty(Value=false)
        -> MulticastSubject Logging
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> WorkflowOutput
