<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:glx="clr-namespace:Bonsai.SpikeGLX;assembly=Bonsai.SpikeGLX"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.Olfactometer;assembly=Harp.Olfactometer"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="glx:Fetch">
          <glx:Host>129.105.30.122</glx:Host>
          <glx:Port>4142</glx:Port>
          <glx:BufferLength>100</glx:BufferLength>
          <glx:StreamType>Daq</glx:StreamType>
          <glx:Substream>0</glx:Substream>
          <glx:Channels>
            <glx:int>0</glx:int>
          </glx:Channels>
          <glx:Downsample>10</glx:Downsample>
          <glx:ConvertToVoltage>true</glx:ConvertToVoltage>
          <glx:HighResolutionTimer>true</glx:HighResolutionTimer>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FrequencyFilter">
          <dsp:SampleRate>1000</dsp:SampleRate>
          <dsp:Cutoff1>1</dsp:Cutoff1>
          <dsp:Cutoff2>20</dsp:Cutoff2>
          <dsp:KernelLength>100</dsp:KernelLength>
          <dsp:FilterType>BandPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertToMat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertScale">
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Scale>-1000</dsp:Scale>
          <dsp:Shift>0</dsp:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Threshold">
          <dsp:ThresholdValue>2</dsp:ThresholdValue>
          <dsp:MaxValue>1</dsp:MaxValue>
          <dsp:ThresholdType>Binary</dsp:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:CountNonZero" />
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="IntProperty">
          <Value>30</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:GateInterval">
          <rx:Interval>PT0.5S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>SniffDetected</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="glx:Fetch">
            <glx:Host>129.105.30.122</glx:Host>
            <glx:Port>4142</glx:Port>
            <glx:BufferLength>1000</glx:BufferLength>
            <glx:StreamType>Daq</glx:StreamType>
            <glx:Substream>0</glx:Substream>
            <glx:Channels>
              <glx:int>1</glx:int>
            </glx:Channels>
            <glx:Downsample>1</glx:Downsample>
            <glx:ConvertToVoltage>true</glx:ConvertToVoltage>
            <glx:HighResolutionTimer>false</glx:HighResolutionTimer>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:FrequencyFilter">
            <dsp:SampleRate>10000</dsp:SampleRate>
            <dsp:Cutoff1>1</dsp:Cutoff1>
            <dsp:Cutoff2>20</dsp:Cutoff2>
            <dsp:KernelLength>1000</dsp:KernelLength>
            <dsp:FilterType>BandPass</dsp:FilterType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:ConvertToMat" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:ConvertScale">
            <dsp:Depth>F32</dsp:Depth>
            <dsp:Scale>-100</dsp:Scale>
            <dsp:Shift>0</dsp:Shift>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:DetectSpikes">
            <dsp:Delay>0</dsp:Delay>
            <dsp:Length>1000</dsp:Length>
            <dsp:Threshold>
              <dsp:double>3</dsp:double>
            </dsp:Threshold>
            <dsp:WaveformRefinement>AlignPeaks</dsp:WaveformRefinement>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>SniffDetected</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="glx:Fetch">
            <glx:Host>129.105.30.122</glx:Host>
            <glx:Port>4142</glx:Port>
            <glx:BufferLength>300</glx:BufferLength>
            <glx:StreamType>Daq</glx:StreamType>
            <glx:Substream>0</glx:Substream>
            <glx:Channels>
              <glx:int>0</glx:int>
            </glx:Channels>
            <glx:Downsample>1</glx:Downsample>
            <glx:ConvertToVoltage>true</glx:ConvertToVoltage>
            <glx:HighResolutionTimer>true</glx:HighResolutionTimer>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:FrequencyFilter">
            <dsp:SampleRate>10000</dsp:SampleRate>
            <dsp:Cutoff1>1</dsp:Cutoff1>
            <dsp:Cutoff2>20</dsp:Cutoff2>
            <dsp:KernelLength>500</dsp:KernelLength>
            <dsp:FilterType>BandPass</dsp:FilterType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:ConvertToMat" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:ConvertScale">
            <dsp:Depth>F32</dsp:Depth>
            <dsp:Scale>-1000</dsp:Scale>
            <dsp:Shift>0</dsp:Shift>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Difference">
            <dsp:Order>1</dsp:Order>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Threshold">
            <dsp:ThresholdValue>0.02</dsp:ThresholdValue>
            <dsp:MaxValue>1</dsp:MaxValue>
            <dsp:ThresholdType>Binary</dsp:ThresholdType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:DetectSpikes">
            <dsp:Delay>100</dsp:Delay>
            <dsp:Length>1000</dsp:Length>
            <dsp:Threshold>
              <dsp:double>0</dsp:double>
            </dsp:Threshold>
            <dsp:WaveformRefinement>AlignPeaks</dsp:WaveformRefinement>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Count</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="scr:ExpressionCondition">
          <scr:Expression>it &gt; 0</scr:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GreaterThan">
          <Operand xsi:type="IntProperty">
            <Value>0</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:DistinctUntilChanged" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:GateInterval">
            <rx:Interval>PT0.1S</rx:Interval>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>SniffDetected</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Define Device</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="Olfactometer1" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Olfactometer1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                    <rx:Name>Olfactometer1Commands</rx:Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PortName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Device">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Disabled</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COM4</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Olfactometer1Events</Name>
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel0ActualFlow" />
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel1ActualFlow" />
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel2ActualFlow" />
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel3ActualFlow" />
                  </Expression>
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:Channel4ActualFlow" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="3" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialize Device</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="StartFlow" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>RButton B Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateEnableFlowPayload">
                <p1:EnableFlow>Enabled</p1:EnableFlow>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="DisableFlow" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton MButton XButton1 A D E Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateEnableFlowPayload">
                <p1:EnableFlow>Disabled</p1:EnableFlow>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateChannelsTargetFlowPayload">
                <p1:Channel0>40</p1:Channel0>
                <p1:Channel1>40</p1:Channel1>
                <p1:Channel2>40</p1:Channel2>
                <p1:Channel3>40</p1:Channel3>
                <p1:Channel4>860</p1:Channel4>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateDI0TriggerPayload">
                <p1:DI0Trigger>Sync</p1:DI0Trigger>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Olfactometer1Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Olfactometer1Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="8" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source2" />
            <Edge From="6" To="8" Label="Source3" />
            <Edge From="7" To="8" Label="Source4" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>SniffDetected</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="scr:ExpressionCondition">
          <scr:Expression>it==True</scr:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>OpenEndValve0</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="p1:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="p1:CreateValveSetPayload">
                  <p1:ValveSet>EndValve0</p1:ValveSet>
                </harp:Payload>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Name" />
              </Expression>
              <Expression xsi:type="MulticastSubject">
                <Name>Olfactometer1Commands</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="3" Label="Source1" />
              <Edge From="2" To="3" Label="Source2" />
              <Edge From="3" To="4" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Delay">
            <rx:DueTime>PT1S</rx:DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>CloseEndValve0</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="p1:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="p1:CreateValveClearPayload">
                  <p1:ValveClear>EndValve0</p1:ValveClear>
                </harp:Payload>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Name" />
              </Expression>
              <Expression xsi:type="MulticastSubject">
                <Name>Olfactometer1Commands</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="3" Label="Source1" />
              <Edge From="2" To="3" Label="Source2" />
              <Edge From="3" To="4" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="scr:ExpressionCondition">
          <scr:Expression>it==False</scr:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Delay">
            <rx:DueTime>PT0S</rx:DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SniffDetected</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>OpenEndValve0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateValveSetPayload">
                <p1:ValveSet>EndValve0</p1:ValveSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Olfactometer1Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>CloseEndValve0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateValveClearPayload">
                <p1:ValveClear>EndValve0</p1:ValveClear>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Olfactometer1Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="34" To="39" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>