<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:CreateSerialPort">
          <port:Name>due</port:Name>
          <port:PortName>COM5</port:PortName>
          <port:BaudRate>115200</port:BaudRate>
          <port:NewLine>\r</port:NewLine>
          <port:Parity>None</port:Parity>
          <port:ParityReplace>63</port:ParityReplace>
          <port:DataBits>8</port:DataBits>
          <port:StopBits>One</port:StopBits>
          <port:Handshake>None</port:Handshake>
          <port:DiscardNull>false</port:DiscardNull>
          <port:DtrEnable>false</port:DtrEnable>
          <port:RtsEnable>false</port:RtsEnable>
          <port:ReadBufferSize>4096</port:ReadBufferSize>
          <port:WriteBufferSize>2048</port:WriteBufferSize>
          <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>V</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>3500</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>due</port:PortName>
          <port:NewLine>\r\n</port:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT2S</rx:DueTime>
          <rx:Period xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialReadLine">
          <port:PortName>due</port:PortName>
          <port:NewLine>\r\n</port:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>VacuumStatus</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>VacuumRequested</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>VacuumSent</Name>
      </Expression>
      <Expression xsi:type="Format">
        <Format>!{0}</Format>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="9" Label="Source1" />
      <Edge From="9" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="11" Label="Source1" />
      <Edge From="11" To="3" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="3" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
